PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'Alter': '', 'Geschlecht': '', 'Haendigkeit': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['fixationskreuz.png', 'conditions_cat_training.xlsx', 'conditions_memo_training.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SceneCat_2023_2_key_resp
  exportHTML = manually
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen zum Experiment

        In diesem Experiment untersuchen wir, wie Fotografien von verschiedenen Kategorien von Räumen wahrgenommen und erinnert werden. Es dauert ca. 30 min.
        Bitte begeben Sie sich für die Zeit des Experiments in eine aufrechte Position.

        Zunächst folgt eine Einverständniserklärung, sowie die Datenschutzerklärung.

        Weiter mit der LEERTASTE.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent conditions_files_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Conditions Files zuweisen
        participant = expInfo['participant']

        if int(participant) % 2 == 0:
            num_participant = int(int(participant)/2)
            conditions_cat_kitchen_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_kitchens_1.xlsx"
            conditions_cat_kitchen_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_kitchens_2.xlsx"
            conditions_cat_living_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_living_rooms_1.xlsx"
            conditions_cat_living_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_living_rooms_2.xlsx"
            conditions_cat_sleep_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_bedrooms_1.xlsx"
            conditions_cat_sleep_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_bedrooms_2.xlsx"
            conditions_memo_kitchen_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_kitchens_1.xlsx"
            conditions_memo_kitchen_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_kitchens_2.xlsx"
            conditions_memo_living_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_living_rooms_1.xlsx"
            conditions_memo_living_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_living_rooms_2.xlsx"
            conditions_memo_sleep_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_bedrooms_1.xlsx"
            conditions_memo_sleep_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_bedrooms_2.xlsx"
            conditions_block_order = "input_files/" + str(num_participant) + "_groupA_scenecat_block_order.xlsx"
        else:
            num_participant = int((int(participant)  + 1)/2)
            conditions_cat_kitchen_a = "input_files/" + str(num_participant) + "_groupB_scenecat_categorization_kitchens_1.xlsx"
            conditions_cat_kitchen_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_kitchens_2.xlsx"
            conditions_cat_living_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_living_rooms_1.xlsx"
            conditions_cat_living_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_living_rooms_2.xlsx"
            conditions_cat_sleep_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_bedrooms_1.xlsx"
            conditions_cat_sleep_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_bedrooms_2.xlsx"
            conditions_memo_kitchen_a = "input_files/" + str(num_participant) + "_groupB_scenecat_memory_kitchens_1.xlsx"
            conditions_memo_kitchen_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_kitchens_2.xlsx"
            conditions_memo_living_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_living_rooms_1.xlsx"
            conditions_memo_living_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_living_rooms_2.xlsx"
            conditions_memo_sleep_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_bedrooms_1.xlsx"
            conditions_memo_sleep_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_bedrooms_2.xlsx"
            conditions_block_order = "input_files/" +  str(num_participant) + "_groupB_scenecat_block_order.xlsx"
  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    TextComponent consent_text
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 25
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      text:
        Einverständniserklärung
        Vielen Dank für Ihre Teilnahme an unserer Studie zum Bilderverständnis!

        Ihre Teilnahme an dieser Untersuchung ist freiwillig. Es steht Ihnen zu jedem Zeitpunkt dieser Studie frei, Ihre Teilnahme abzubrechen, ohne dass Ihnen daraus Nachteile entstehen.

        Datenschutz: Ihre Angaben sind selbstverständlich vertraulich und werden nur in vollständig anonymisierter Form, d.h. ohne Bezug auf Ihren Namen oder andere persönliche Daten gespeichert und ausgewertet. Weitere Informationen finden Sie in der Datenschutzerklärung.

        Fragen: Falls Sie noch Fragen zu dieser Studie haben sollten, können Sie sich jederzeit an die Studienleiterin  oder an Prof. Niko Busch (niko.busch@uni-muenster) wenden.


        Ich bestätige, dass ich mindestens 18 Jahre alt bin, diese Einverständniserklärung gelesen und verstanden habe und an der Studie teilnehmen möchte. Die Datenschutzerklärung habe ich zur Kenntnis genommen und willige freiwillig in die dort dargestellte Erhebung und weitere Verarbeitung meiner personenbezogenen Daten ein. Ich bin über mein Recht informiert worden, meine Einwilligung jederzeit ohne Angabe von Gründen widerrufen zu können.


        Gleich geht's weiter...
    ResourceManagerComponent resources_consent
      actionType = Start Only
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['conditions_memo_sleep_b', 'conditions_memo_sleep_a', 'conditions_memo_living_b', 'conditions_memo_living_a', 'conditions_memo_kitchen_b', 'conditions_memo_kitchen_a', 'conditions_cat_sleep_b', 'conditions_cat_sleep_a', 'conditions_cat_living_b', 'conditions_cat_living_a', 'conditions_cat_kitchen_b', 'conditions_cat_kitchen_a', 'conditions_block_order', 'stimuli/asdfgh.jpg', 'stimuli/asdfghertghvgh.jpg', 'stimuli/asdfghjkjhg.jpg', 'stimuli/asdfghjkloelkjhg.jpg', 'stimuli/dfghjhgf.jpg', 'stimuli/erhvgh.jpg', 'stimuli/erthjnbvcfg.jpg', 'stimuli/fvbjgv.jpg', 'stimuli/gfdfghjgf.jpg', 'stimuli/gfvbnbg.jpg', 'stimuli/hhhh.jpg', 'stimuli/ihnbvcfgd.jpg', 'stimuli/ijnbgzuik.jpg', 'stimuli/img_0adz5.jpg', 'stimuli/img_0bah1.jpg', 'stimuli/img_0dege.jpg', 'stimuli/img_0eflx.jpg', 'stimuli/img_0ej0y.jpg', 'stimuli/img_0ekxv.jpg', 'stimuli/img_0ez70.jpg', 'stimuli/img_0j24m.jpg', 'stimuli/img_0jzz7.jpg', 'stimuli/img_0kmfo.jpg', 'stimuli/img_0kqc0.jpg', 'stimuli/img_0mhms.jpg', 'stimuli/img_0nckg.jpg', 'stimuli/img_0noah.jpg', 'stimuli/img_00ojb.jpg', 'stimuli/img_0pt3z.jpg', 'stimuli/img_0qndh.jpg', 'stimuli/img_0rbu4.jpg', 'stimuli/img_0si9u.jpg', 'stimuli/img_0t206.jpg', 'stimuli/img_0ugsg.jpg', 'stimuli/img_0uiwg.jpg', 'stimuli/img_0urnu.jpg', 'stimuli/img_0wv81.jpg', 'stimuli/img_0wzeq.jpg', 'stimuli/img_0x4kb.jpg', 'stimuli/img_0xwtf.jpg', 'stimuli/img_0zzo4.jpg', 'stimuli/img_1ao2d.jpg', 'stimuli/img_1b74f.jpg', 'stimuli/img_1ccse.jpg', 'stimuli/img_1cdqc.jpg', 'stimuli/img_1cm9s.jpg', 'stimuli/img_1d1l9.jpg', 'stimuli/img_1etij.jpg', 'stimuli/img_1fjfz.jpg', 'stimuli/img_1gr78.jpg', 'stimuli/img_1i6q5.jpg', 'stimuli/img_1iam9.jpg', 'stimuli/img_1ibl4.jpg', 'stimuli/img_1m0fn.jpg', 'stimuli/img_1n8b9.jpg', 'stimuli/img_1ojyk.jpg', 'stimuli/img_1plu7.jpg', 'stimuli/img_1q8pa.jpg', 'stimuli/img_1qa4t.jpg', 'stimuli/img_1ql54.jpg', 'stimuli/img_1qye0.jpg', 'stimuli/img_1r2ri.jpg', 'stimuli/img_1r08n.jpg', 'stimuli/img_1s8dl.jpg', 'stimuli/img_1scr4.jpg', 'stimuli/img_1twlp.jpg', 'stimuli/img_1uwbl.jpg', 'stimuli/img_1vq1v.jpg', 'stimuli/img_1vukv.jpg', 'stimuli/img_01w8b.jpg', 'stimuli/img_1wxyo.jpg', 'stimuli/img_1xdqe.jpg', 'stimuli/img_1yffi.jpg', 'stimuli/img_1zhz6.jpg', 'stimuli/img_02alv.jpg', 'stimuli/img_2b8fp.jpg', 'stimuli/img_2c9w1.jpg', 'stimuli/img_2cebl.jpg', 'stimuli/img_002cv.jpg', 'stimuli/img_2d000.jpg', 'stimuli/img_2d3c2.jpg', 'stimuli/img_2d82m.jpg', 'stimuli/img_2dnfy.jpg', 'stimuli/img_2ehfe.jpg', 'stimuli/img_2fe41.jpg', 'stimuli/img_2g129.jpg', 'stimuli/img_2i925.jpg', 'stimuli/img_2imrl.jpg', 'stimuli/img_2jgpo.jpg', 'stimuli/img_2js6m.jpg', 'stimuli/img_2lcxi.jpg', 'stimuli/img_2lqsf.jpg', 'stimuli/img_2na1o.jpg', 'stimuli/img_2pk6v.jpg', 'stimuli/img_2pnl2.jpg', 'stimuli/img_2qdvq.jpg', 'stimuli/img_2qhro.jpg', 'stimuli/img_2qkvm.jpg', 'stimuli/img_2rtxu.jpg', 'stimuli/img_2rwes.jpg', 'stimuli/img_2rylq.jpg', 'stimuli/img_2s780.jpg', 'stimuli/img_2vqdc.jpg', 'stimuli/img_2wkab.jpg', 'stimuli/img_2ygqr.jpg', 'stimuli/img_3a2r2.jpg', 'stimuli/img_3a6lc.jpg', 'stimuli/img_3ar9q.jpg', 'stimuli/img_3arcv.jpg', 'stimuli/img_3aueq.jpg', 'stimuli/img_3bp7b.jpg', 'stimuli/img_3bxjb.jpg', 'stimuli/img_3cp3s.jpg', 'stimuli/img_3eusg.jpg', 'stimuli/img_3fldm.jpg', 'stimuli/img_3gm8h.jpg', 'stimuli/img_3h4c9.jpg', 'stimuli/img_3hmlp.jpg', 'stimuli/img_3i80k.jpg', 'stimuli/img_3ialr.jpg', 'stimuli/img_3jnt7.jpg', 'stimuli/img_3kho5.jpg', 'stimuli/img_3lli8.jpg', 'stimuli/img_3lvof.jpg', 'stimuli/img_3m2h0.jpg', 'stimuli/img_3m61b.jpg', 'stimuli/img_3miwe.jpg', 'stimuli/img_3mp24.jpg', 'stimuli/img_3nswx.jpg', 'stimuli/img_3oyah.jpg', 'stimuli/img_3p0zv.jpg', 'stimuli/img_3ph9o.jpg', 'stimuli/img_3q6t4.jpg', 'stimuli/img_3ro4n.jpg', 'stimuli/img_3s357.jpg', 'stimuli/img_3shmp.jpg', 'stimuli/img_3sw8t.jpg', 'stimuli/img_3tnh4.jpg', 'stimuli/img_3v5w3.jpg', 'stimuli/img_3w4dt.jpg', 'stimuli/img_3wj63.jpg', 'stimuli/img_3y35o.jpg', 'stimuli/img_3ze38.jpg', 'stimuli/img_4bef4.jpg', 'stimuli/img_4bxxj.jpg', 'stimuli/img_4c48i.jpg', 'stimuli/img_4d0aw.jpg', 'stimuli/img_4dxo4.jpg', 'stimuli/img_4g6yq.jpg', 'stimuli/img_4glfv.jpg', 'stimuli/img_4jra4.jpg', 'stimuli/img_4k1j9.jpg', 'stimuli/img_4kzor.jpg', 'stimuli/img_4lyad.jpg', 'stimuli/img_4m9ud.jpg', 'stimuli/img_4o8l0.jpg', 'stimuli/img_4p9dc.jpg', 'stimuli/img_4q2n8.jpg', 'stimuli/img_4s67y.jpg', 'stimuli/img_4spc8.jpg', 'stimuli/img_4td0x.jpg', 'stimuli/img_4ufga.jpg', 'stimuli/img_4utvc.jpg', 'stimuli/img_4wq98.jpg', 'stimuli/img_4xr0x.jpg', 'stimuli/img_4xxuf.jpg', 'stimuli/img_4y7mh.jpg', 'stimuli/img_4yy1j.jpg', 'stimuli/img_5a1ke.jpg', 'stimuli/img_5alzj.jpg', 'stimuli/img_05c3h.jpg', 'stimuli/img_5e7iu.jpg', 'stimuli/img_5ecez.jpg', 'stimuli/img_5ewoj.jpg', 'stimuli/img_5f8ha.jpg', 'stimuli/img_5fkbp.jpg', 'stimuli/img_05flq.jpg', 'stimuli/img_5fr9m.jpg', 'stimuli/img_5il0t.jpg', 'stimuli/img_5jp4f.jpg', 'stimuli/img_5jy9c.jpg', 'stimuli/img_5k4cy.jpg', 'stimuli/img_5m6x4.jpg', 'stimuli/img_5m75u.jpg', 'stimuli/img_5mw7y.jpg', 'stimuli/img_5nfmx.jpg', 'stimuli/img_5nlnv.jpg', 'stimuli/img_5nlyi.jpg', 'stimuli/img_5o1x3.jpg', 'stimuli/img_5oubg.jpg', 'stimuli/img_5ovr5.jpg', 'stimuli/img_5p2ql.jpg', 'stimuli/img_5pmhd.jpg', 'stimuli/img_5qdyh.jpg', 'stimuli/img_5t91y.jpg', 'stimuli/img_5tr4v.jpg', 'stimuli/img_5udo9.jpg', 'stimuli/img_5vc3c.jpg', 'stimuli/img_5w83x.jpg', 'stimuli/img_5x1u3.jpg', 'stimuli/img_5yhe7.jpg', 'stimuli/img_5yhyk.jpg', 'stimuli/img_6a0hu.jpg', 'stimuli/img_6cg5g.jpg', 'stimuli/img_6ddrx.jpg', 'stimuli/img_6dl6t.jpg', 'stimuli/img_6dvd0.jpg', 'stimuli/img_6dves.jpg', 'stimuli/img_6fo9f.jpg', 'stimuli/img_6funa.jpg', 'stimuli/img_6hyyt.jpg', 'stimuli/img_6iqem.jpg', 'stimuli/img_6j727.jpg', 'stimuli/img_6jjvh.jpg', 'stimuli/img_6jsgr.jpg', 'stimuli/img_6lpz9.jpg', 'stimuli/img_6mdbc.jpg', 'stimuli/img_6nbgt.jpg', 'stimuli/img_6p0lz.jpg', 'stimuli/img_6qetq.jpg', 'stimuli/img_6syr3.jpg', 'stimuli/img_6tou7.jpg', 'stimuli/img_6umgp.jpg', 'stimuli/img_6v5oo.jpg', 'stimuli/img_6vila.jpg', 'stimuli/img_6vta6.jpg', 'stimuli/img_6w2lk.jpg', 'stimuli/img_6wne4.jpg', 'stimuli/img_6wr5y.jpg', 'stimuli/img_6wshc.jpg', 'stimuli/img_6xg4l.jpg', 'stimuli/img_6zla6.jpg', 'stimuli/img_6zz63.jpg', 'stimuli/img_7a0c1.jpg', 'stimuli/img_7a2m9.jpg', 'stimuli/img_07c1w.jpg', 'stimuli/img_7caxh.jpg', 'stimuli/img_7e06w.jpg', 'stimuli/img_7ed9m.jpg', 'stimuli/img_7f11q.jpg', 'stimuli/img_7fwp2.jpg', 'stimuli/img_7hti2.jpg', 'stimuli/img_7i6d8.jpg', 'stimuli/img_7likj.jpg', 'stimuli/img_7lron.jpg', 'stimuli/img_7lz7m.jpg', 'stimuli/img_7m3wh.jpg', 'stimuli/img_7m07e.jpg', 'stimuli/img_7mqbh.jpg', 'stimuli/img_7os7q.jpg', 'stimuli/img_7pgd2.jpg', 'stimuli/img_7q6ry.jpg', 'stimuli/img_7rss9.jpg', 'stimuli/img_07tdb.jpg', 'stimuli/img_7ucnr.jpg', 'stimuli/img_7w5tw.jpg', 'stimuli/img_7wquy.jpg', 'stimuli/img_7wul8.jpg', 'stimuli/img_7wxuy.jpg', 'stimuli/img_7xzhf.jpg', 'stimuli/img_7y67w.jpg', 'stimuli/img_7z2tj.jpg', 'stimuli/img_8cnbp.jpg', 'stimuli/img_8dacu.jpg', 'stimuli/img_8df2e.jpg', 'stimuli/img_08dll.jpg', 'stimuli/img_8dmpq.jpg', 'stimuli/img_8fpog.jpg', 'stimuli/img_8i1jb.jpg', 'stimuli/img_8i3q8.jpg', 'stimuli/img_8jy3h.jpg', 'stimuli/img_8l8qo.jpg', 'stimuli/img_8mkbv.jpg', 'stimuli/img_8qkmd.jpg', 'stimuli/img_8qt7d.jpg', 'stimuli/img_8tc8e.jpg', 'stimuli/img_08tlm.jpg', 'stimuli/img_8vcm6.jpg', 'stimuli/img_8vygl.jpg', 'stimuli/img_8wa09.jpg', 'stimuli/img_8ybbp.jpg', 'stimuli/img_8zf2f.jpg', 'stimuli/img_09a3o.jpg', 'stimuli/img_9ann0.jpg', 'stimuli/img_9b6yl.jpg', 'stimuli/img_9bkl9.jpg', 'stimuli/img_9ck2q.jpg', 'stimuli/img_9d84u.jpg', 'stimuli/img_9dg1v.jpg', 'stimuli/img_9g4tp.jpg', 'stimuli/img_9g12g.jpg', 'stimuli/img_9jgbc.jpg', 'stimuli/img_09jt1.jpg', 'stimuli/img_09lgm.jpg', 'stimuli/img_9mcah.jpg', 'stimuli/img_9mky8.jpg', 'stimuli/img_9mlzp.jpg', 'stimuli/img_9n6al.jpg', 'stimuli/img_9nnrj.jpg', 'stimuli/img_9o0wl.jpg', 'stimuli/img_9oofc.jpg', 'stimuli/img_9os15.jpg', 'stimuli/img_9pfbj.jpg', 'stimuli/img_9qg3g.jpg', 'stimuli/img_9qmek.jpg', 'stimuli/img_09ram.jpg', 'stimuli/img_9ro1y.jpg', 'stimuli/img_9stvt.jpg', 'stimuli/img_9tgq9.jpg', 'stimuli/img_9ugw8.jpg', 'stimuli/img_9wc9w.jpg', 'stimuli/img_9wgjs.jpg', 'stimuli/img_9wmp8.jpg', 'stimuli/img_9x6du.jpg', 'stimuli/img_9z99v.jpg', 'stimuli/img_10t4k.jpg', 'stimuli/img_11anu.jpg', 'stimuli/img_12lvj.jpg', 'stimuli/img_13ozs.jpg', 'stimuli/img_13ymo.jpg', 'stimuli/img_14hyn.jpg', 'stimuli/img_15bss.jpg', 'stimuli/img_16kib.jpg', 'stimuli/img_17p17.jpg', 'stimuli/img_18r80.jpg', 'stimuli/img_23ged.jpg', 'stimuli/img_24rt2.jpg', 'stimuli/img_25zj9.jpg', 'stimuli/img_26n4i.jpg', 'stimuli/img_28eqs.jpg', 'stimuli/img_29cw5.jpg', 'stimuli/img_29gyt.jpg', 'stimuli/img_29td3.jpg', 'stimuli/img_30vz5.jpg', 'stimuli/img_33ka1.jpg', 'stimuli/img_34vo5.jpg', 'stimuli/img_35zbz.jpg', 'stimuli/img_37hgm.jpg', 'stimuli/img_37uwk.jpg', 'stimuli/img_38iec.jpg', 'stimuli/img_39hz5.jpg', 'stimuli/img_43unx.jpg', 'stimuli/img_43xbt.jpg', 'stimuli/img_43xdp.jpg', 'stimuli/img_46tsn.jpg', 'stimuli/img_47k1j.jpg', 'stimuli/img_47zvc.jpg', 'stimuli/img_048l0.jpg', 'stimuli/img_48r6i.jpg', 'stimuli/img_49h18.jpg', 'stimuli/img_52i74.jpg', 'stimuli/img_53nbn.jpg', 'stimuli/img_56f8c.jpg', 'stimuli/img_57os5.jpg', 'stimuli/img_58n4j.jpg', 'stimuli/img_58ujj.jpg', 'stimuli/img_60x5k.jpg', 'stimuli/img_62xpv.jpg', 'stimuli/img_63slq.jpg', 'stimuli/img_64ite.jpg', 'stimuli/img_65cdi.jpg', 'stimuli/img_65zmd.jpg', 'stimuli/img_66fuf.jpg', 'stimuli/img_66ncr.jpg', 'stimuli/img_66sfd.jpg', 'stimuli/img_66zut.jpg', 'stimuli/img_68aqt.jpg', 'stimuli/img_68bu5.jpg', 'stimuli/img_68d11.jpg', 'stimuli/img_68f2l.jpg', 'stimuli/img_68wfw.jpg', 'stimuli/img_70ji9.jpg', 'stimuli/img_70x14.jpg', 'stimuli/img_71mhq.jpg', 'stimuli/img_72fmj.jpg', 'stimuli/img_72hmj.jpg', 'stimuli/img_72hyg.jpg', 'stimuli/img_72wnn.jpg', 'stimuli/img_73pyk.jpg', 'stimuli/img_76tei.jpg', 'stimuli/img_77pme.jpg', 'stimuli/img_78fxr.jpg', 'stimuli/img_78p4f.jpg', 'stimuli/img_78zcn.jpg', 'stimuli/img_79b5l.jpg', 'stimuli/img_80mdz.jpg', 'stimuli/img_81nb0.jpg', 'stimuli/img_82bie.jpg', 'stimuli/img_84s7n.jpg', 'stimuli/img_85xkk.jpg', 'stimuli/img_86s60.jpg', 'stimuli/img_88h71.jpg', 'stimuli/img_88mrj.jpg', 'stimuli/img_088sa.jpg', 'stimuli/img_89dvt.jpg', 'stimuli/img_89rmb.jpg', 'stimuli/img_91csq.jpg', 'stimuli/img_91ht8.jpg', 'stimuli/img_91lbx.jpg', 'stimuli/img_92eyc.jpg', 'stimuli/img_92f93.jpg', 'stimuli/img_93vg8.jpg', 'stimuli/img_93vmh.jpg', 'stimuli/img_95hiv.jpg', 'stimuli/img_97f62.jpg', 'stimuli/img_99exx.jpg', 'stimuli/img_99qvn.jpg', 'stimuli/img_165pk.jpg', 'stimuli/img_190ub.jpg', 'stimuli/img_196rk.jpg', 'stimuli/img_287jq.jpg', 'stimuli/img_301af.jpg', 'stimuli/img_314bq.jpg', 'stimuli/img_319z4.jpg', 'stimuli/img_328s0.jpg', 'stimuli/img_411xa.jpg', 'stimuli/img_463mq.jpg', 'stimuli/img_520au.jpg', 'stimuli/img_0548r.jpg', 'stimuli/img_552an.jpg', 'stimuli/img_667w7.jpg', 'stimuli/img_753pq.jpg', 'stimuli/img_782qs.jpg', 'stimuli/img_791d1.jpg', 'stimuli/img_818nk.jpg', 'stimuli/img_936g7.jpg', 'stimuli/img_948n5.jpg', 'stimuli/img_4800h.jpg', 'stimuli/img_4974k.jpg', 'stimuli/img_5949k.jpg', 'stimuli/img_7147j.jpg', 'stimuli/img_8297a.jpg', 'stimuli/img_9684y.jpg', 'stimuli/img_60242.jpg', 'stimuli/img_93366.jpg', 'stimuli/img_a1erh.jpg', 'stimuli/img_a2mx2.jpg', 'stimuli/img_a2pkp.jpg', 'stimuli/img_a3jds.jpg', 'stimuli/img_a6u3n.jpg', 'stimuli/img_a7bdg.jpg', 'stimuli/img_a8irr.jpg', 'stimuli/img_a8wvq.jpg', 'stimuli/img_a8y4y.jpg', 'stimuli/img_a9acb.jpg', 'stimuli/img_a9he3.jpg', 'stimuli/img_a09k2.jpg', 'stimuli/img_a220l.jpg', 'stimuli/img_abobq.jpg', 'stimuli/img_ac0ey.jpg', 'stimuli/img_aellb.jpg', 'stimuli/img_af3l2.jpg', 'stimuli/img_afcbj.jpg', 'stimuli/img_afmdp.jpg', 'stimuli/img_agwon.jpg', 'stimuli/img_ah5vo.jpg', 'stimuli/img_aki78.jpg', 'stimuli/img_allt1.jpg', 'stimuli/img_amsgw.jpg', 'stimuli/img_amsko.jpg', 'stimuli/img_anakd.jpg', 'stimuli/img_and1v.jpg', 'stimuli/img_anfk9.jpg', 'stimuli/img_anhzn.jpg', 'stimuli/img_anjr0.jpg', 'stimuli/img_anzgh.jpg', 'stimuli/img_aplao.jpg', 'stimuli/img_aqu2d.jpg', 'stimuli/img_arx94.jpg', 'stimuli/img_as3da.jpg', 'stimuli/img_astid.jpg', 'stimuli/img_aswbu.jpg', 'stimuli/img_atzjw.jpg', 'stimuli/img_aweye.jpg', 'stimuli/img_awuev.jpg', 'stimuli/img_ay56d.jpg', 'stimuli/img_b0yct.jpg', 'stimuli/img_b2jli.jpg', 'stimuli/img_b2xn0.jpg', 'stimuli/img_b3fi1.jpg', 'stimuli/img_b7gom.jpg', 'stimuli/img_b7ycd.jpg', 'stimuli/img_b17ma.jpg', 'stimuli/img_b21d7.jpg', 'stimuli/img_b34c4.jpg', 'stimuli/img_b36ne.jpg', 'stimuli/img_b55q0.jpg', 'stimuli/img_b89t4.jpg', 'stimuli/img_b971s.jpg', 'stimuli/img_ba2q4.jpg', 'stimuli/img_badai.jpg', 'stimuli/img_bbs77.jpg', 'stimuli/img_bbt0k.jpg', 'stimuli/img_bdqmg.jpg', 'stimuli/img_bdz92.jpg', 'stimuli/img_be0j0.jpg', 'stimuli/img_bendp.jpg', 'stimuli/img_bf4eh.jpg', 'stimuli/img_bf8nx.jpg', 'stimuli/img_bflfy.jpg', 'stimuli/img_bg264.jpg', 'stimuli/img_bj2gr.jpg', 'stimuli/img_bj99b.jpg', 'stimuli/img_bklr1.jpg', 'stimuli/img_bl2f1.jpg', 'stimuli/img_bnetw.jpg', 'stimuli/img_bntrh.jpg', 'stimuli/img_bp226.jpg', 'stimuli/img_bpgb3.jpg', 'stimuli/img_bpyv5.jpg', 'stimuli/img_bs3m7.jpg', 'stimuli/img_bsr0p.jpg', 'stimuli/img_bwo9g.jpg', 'stimuli/img_bwx3i.jpg', 'stimuli/img_bysq2.jpg', 'stimuli/img_bzuyx.jpg', 'stimuli/img_c0ecw.jpg', 'stimuli/img_c0kt4.jpg', 'stimuli/img_c0me7.jpg', 'stimuli/img_c0vzo.jpg', 'stimuli/img_c2pbs.jpg', 'stimuli/img_c3ipx.jpg', 'stimuli/img_c3r29.jpg', 'stimuli/img_c4ljf.jpg', 'stimuli/img_c4uwt.jpg', 'stimuli/img_c4vkt.jpg', 'stimuli/img_c6tg4.jpg', 'stimuli/img_c7bpx.jpg', 'stimuli/img_c30d1.jpg', 'stimuli/img_c79r7.jpg', 'stimuli/img_c89x3.jpg', 'stimuli/img_ca8kd.jpg', 'stimuli/img_caqzp.jpg', 'stimuli/img_ccn2w.jpg', 'stimuli/img_ce9vx.jpg', 'stimuli/img_ce55l.jpg', 'stimuli/img_cehin.jpg', 'stimuli/img_cel9k.jpg', 'stimuli/img_ceqfs.jpg', 'stimuli/img_cf2bd.jpg', 'stimuli/img_cf9gk.jpg', 'stimuli/img_cfarv.jpg', 'stimuli/img_cgdyc.jpg', 'stimuli/img_cht1k.jpg', 'stimuli/img_ciboa.jpg', 'stimuli/img_cic06.jpg', 'stimuli/img_cjvod.jpg', 'stimuli/img_ck3m4.jpg', 'stimuli/img_clbu4.jpg', 'stimuli/img_cmjji.jpg', 'stimuli/img_cmyvx.jpg', 'stimuli/img_cn574.jpg', 'stimuli/img_cnxex.jpg', 'stimuli/img_cnyac.jpg', 'stimuli/img_cogrz.jpg', 'stimuli/img_cpsdh.jpg', 'stimuli/img_cqot9.jpg', 'stimuli/img_ct6bx.jpg', 'stimuli/img_ct240.jpg', 'stimuli/img_cust8.jpg', 'stimuli/img_cv6mf.jpg', 'stimuli/img_cv9qj.jpg', 'stimuli/img_cvyc3.jpg', 'stimuli/img_cwokj.jpg', 'stimuli/img_cxpff.jpg', 'stimuli/img_cxqey.jpg', 'stimuli/img_cy08j.jpg', 'stimuli/img_czjk5.jpg', 'stimuli/img_d0k76.jpg', 'stimuli/img_d0sj6.jpg', 'stimuli/img_d1e9h.jpg', 'stimuli/img_d3t0o.jpg', 'stimuli/img_d3wwy.jpg', 'stimuli/img_d4rmg.jpg', 'stimuli/img_d6jnd.jpg', 'stimuli/img_d7iri.jpg', 'stimuli/img_d7nng.jpg', 'stimuli/img_d8xbu.jpg', 'stimuli/img_d9ogj.jpg', 'stimuli/img_d26ik.jpg', 'stimuli/img_d55q7.jpg', 'stimuli/img_d90m7.jpg', 'stimuli/img_d480g.jpg', 'stimuli/img_d5947.jpg', 'stimuli/img_daqxs.jpg', 'stimuli/img_db1ke.jpg', 'stimuli/img_dbf9a.jpg', 'stimuli/img_dg5h7.jpg', 'stimuli/img_dh5no.jpg', 'stimuli/img_dhjnr.jpg', 'stimuli/img_di6f0.jpg', 'stimuli/img_di9lr.jpg']
      startVal [time (s)] = 0
    TextComponent consent_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 25
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      text:
        Einverständniserklärung
        Vielen Dank für Ihre Teilnahme an unserer Studie zum Bilderverständnis!

        Ihre Teilnahme an dieser Untersuchung ist freiwillig. Es steht Ihnen zu jedem Zeitpunkt dieser Studie frei, Ihre Teilnahme abzubrechen, ohne dass Ihnen daraus Nachteile entstehen.

        Datenschutz: Ihre Angaben sind selbstverständlich vertraulich und werden nur in vollständig anonymisierter Form, d.h. ohne Bezug auf Ihren Namen oder andere persönliche Daten gespeichert und ausgewertet. Weitere Informationen finden Sie in der Datenschutzerklärung.

        Fragen: Falls Sie noch Fragen zu dieser Studie haben sollten, können Sie sich jederzeit an die Studienleiterin  oder an Prof. Niko Busch (niko.busch@uni-muenster) wenden.


        Ich bestätige, dass ich mindestens 18 Jahre alt bin, diese Einverständniserklärung gelesen und verstanden habe und an der Studie teilnehmen möchte. Die Datenschutzerklärung habe ich zur Kenntnis genommen und willige freiwillig in die dort dargestellte Erhebung und weitere Verarbeitung meiner personenbezogenen Daten ein. Ich bin über mein Recht informiert worden, meine Einwilligung jederzeit ohne Angabe von Gründen widerrufen zu können.

        Drücken Sie die LEERTASTE, um die Teilnahme zu bestätigen.
        Drücken Sie ESC, um das Experiment abzubrechen.
    KeyboardComponent consent_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 25
      store = nothing
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    ResourceManagerComponent resources_consent_new
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['stimuli/catch_01_stairs.jpg', 'stimuli/catch_01_supermarket.jpg', 'stimuli/catch_02_stairs.jpg', 'stimuli/catch_02_supermarket.jpg', 'stimuli/catch_03_stairs.jpg', 'stimuli/catch_03_supermarket.jpg', 'stimuli/catch_04_stairs.jpg', 'stimuli/catch_04_supermarket.jpg', 'stimuli/catch_05_stairs.jpg', 'stimuli/catch_05_supermarket.jpg', 'stimuli/catch_06_stairs.jpg', 'stimuli/catch_06_supermarket.jpg', 'stimuli/catch_07_stairs.jpg', 'stimuli/catch_07_supermarket.jpg', 'stimuli/catch_08_stairs.jpg', 'stimuli/catch_08_supermarket.jpg', 'stimuli/catch_09_stairs.jpg', 'stimuli/catch_09_supermarket.jpg', 'stimuli/catch_10_stairs.jpg', 'stimuli/catch_10_supermarket.jpg', 'stimuli/catch_11_stairs.jpg', 'stimuli/catch_11_supermarket.jpg', 'stimuli/catch_12_stairs.jpg', 'stimuli/catch_12_supermarket.jpg', 'stimuli/catch_13_stairs.jpg', 'stimuli/catch_13_supermarket.jpg', 'stimuli/catch_14_stairs.jpg', 'stimuli/catch_14_supermarket.jpg', 'stimuli/catch_15_stairs.jpg', 'stimuli/catch_15_supermarket.jpg', 'stimuli/catch_16_stairs.jpg', 'stimuli/catch_16_supermarket.jpg', 'stimuli/catch_17_stairs.jpg', 'stimuli/catch_17_supermarket.jpg', 'stimuli/catch_18_stairs.jpg', 'stimuli/catch_18_supermarket.jpg', 'stimuli/catch_19_stairs.jpg', 'stimuli/catch_19_supermarket.jpg', 'stimuli/catch_20_stairs.jpg', 'stimuli/catch_20_supermarket.jpg', 'stimuli/img_0eflx.png', 'stimuli/img_0j24m.png', 'stimuli/img_0nckg.png', 'stimuli/img_1ao2d.png', 'stimuli/img_1r2ri.png', 'stimuli/img_1vq1v.png', 'stimuli/img_01w8b.png', 'stimuli/img_2js6m.png', 'stimuli/img_2pk6v.png', 'stimuli/img_2pnl2.png', 'stimuli/img_2qhro.png', 'stimuli/img_3bxjb.png', 'stimuli/img_3gm8h.png', 'stimuli/img_3h4c9.png', 'stimuli/img_3sw8t.png', 'stimuli/img_3ze38.png', 'stimuli/img_4o8l0.png', 'stimuli/img_4ufga.png', 'stimuli/img_4wq98.png', 'stimuli/img_05flq.png', 'stimuli/img_5il0t.png', 'stimuli/img_5jp4f.png', 'stimuli/img_5jy9c.png', 'stimuli/img_5mw7y.png', 'stimuli/img_5nlnv.png', 'stimuli/img_5p2ql.png', 'stimuli/img_5tr4v.png', 'stimuli/img_5yhyk.png', 'stimuli/img_6a0hu.png', 'stimuli/img_6ddrx.png', 'stimuli/img_6nbgt.png', 'stimuli/img_6wne4.png', 'stimuli/img_7ed9m.png', 'stimuli/img_7os7q.png', 'stimuli/img_7pgd2.png', 'stimuli/img_7ucnr.png', 'stimuli/img_7w5tw.png', 'stimuli/img_7wul8.png', 'stimuli/img_8dmpq.png', 'stimuli/img_8fpog.png', 'stimuli/img_9bkl9.png', 'stimuli/img_9oofc.png', 'stimuli/img_9pfbj.png', 'stimuli/img_9z99v.png', 'stimuli/img_16kib.png', 'stimuli/img_30vz5.png', 'stimuli/img_37hgm.png', 'stimuli/img_53nbn.png', 'stimuli/img_57os5.png', 'stimuli/img_65cdi.png', 'stimuli/img_68wfw.png', 'stimuli/img_71mhq.png', 'stimuli/img_72fmj.png', 'stimuli/img_73pyk.png', 'stimuli/img_84s7n.png', 'stimuli/img_088sa.png', 'stimuli/img_89rmb.png', 'stimuli/img_91lbx.png', 'stimuli/img_99exx.png', 'stimuli/img_165pk.png', 'stimuli/img_196rk.png', 'stimuli/img_411xa.png', 'stimuli/img_5949k.png', 'stimuli/img_9684y.png', 'stimuli/img_a8wvq.png', 'stimuli/img_a8y4y.png', 'stimuli/img_a9acb.png', 'stimuli/img_a9he3.png', 'stimuli/img_abobq.png', 'stimuli/img_anjr0.png', 'stimuli/img_anzgh.png', 'stimuli/img_aplao.png', 'stimuli/img_as3da.png', 'stimuli/img_aweye.png', 'stimuli/img_b21d7.png', 'stimuli/img_b89t4.png', 'stimuli/img_b971s.png', 'stimuli/img_badai.png', 'stimuli/img_bbs77.png', 'stimuli/img_bdz92.png', 'stimuli/img_bf8nx.png', 'stimuli/img_bg264.png', 'stimuli/img_bj2gr.png', 'stimuli/img_bj99b.png', 'stimuli/img_bklr1.png', 'stimuli/img_bntrh.png', 'stimuli/img_bpyv5.png', 'stimuli/img_bwo9g.png', 'stimuli/img_c0me7.png', 'stimuli/img_c0vzo.png', 'stimuli/img_c2pbs.png', 'stimuli/img_c4uwt.png', 'stimuli/img_c79r7.png', 'stimuli/img_c89x3.png', 'stimuli/img_ca8kd.png', 'stimuli/img_ccn2w.png', 'stimuli/img_ce9vx.png', 'stimuli/img_ce55l.png', 'stimuli/img_cgdyc.png', 'stimuli/img_cmyvx.png', 'stimuli/img_cnyac.png', 'stimuli/img_cogrz.png', 'stimuli/img_cv6mf.png', 'stimuli/img_cv9qj.png', 'stimuli/img_d0k76.png', 'stimuli/img_d3t0o.png', 'stimuli/img_d8xbu.png', 'stimuli/img_dg5h7.png', 'stimuli/img_di6f0.png', 'stimuli/img_dmjh8.png', 'stimuli/img_e26ut.png', 'stimuli/img_eatdk.png', 'stimuli/img_eiu3c.png', 'stimuli/img_ensho.png', 'stimuli/img_es7o2.png', 'stimuli/img_esb4r.png', 'stimuli/img_ewrjk.png', 'stimuli/img_f4jxo.png', 'stimuli/img_faly8.png', 'stimuli/img_fbihy.png', 'stimuli/img_fhm45.png', 'stimuli/img_fnu4h.png', 'stimuli/img_fqgem.png', 'stimuli/img_g2akb.png', 'stimuli/img_g13d5.png', 'stimuli/img_g7870.png', 'stimuli/img_gbypq.png', 'stimuli/img_gka64.png', 'stimuli/img_gqy6z.png', 'stimuli/img_h1yyu.png', 'stimuli/img_h13c3.png', 'stimuli/img_hc49v.png', 'stimuli/img_hfz8w.png', 'stimuli/img_hmmra.png', 'stimuli/img_huisn.png', 'stimuli/img_i2k07.png', 'stimuli/img_i6wsx.png', 'stimuli/img_i7vab.png', 'stimuli/img_ic3os.png', 'stimuli/img_ifebc.png', 'stimuli/img_ikk62.png', 'stimuli/img_il020.png', 'stimuli/img_inqod.png', 'stimuli/img_iudc4.png', 'stimuli/img_iyxnj.png', 'stimuli/img_j4ttn.png', 'stimuli/img_j5rpx.png', 'stimuli/img_j73b6.png', 'stimuli/img_j856a.png', 'stimuli/img_jge7p.png', 'stimuli/img_jivhq.png', 'stimuli/img_jkm86.png', 'stimuli/img_jp28n.png', 'stimuli/img_jpjeg.png', 'stimuli/img_jpldg.png', 'stimuli/img_juob3.png', 'stimuli/img_jz3kd.png', 'stimuli/img_k3abb.png', 'stimuli/img_kljj4.png', 'stimuli/img_kn0we.png', 'stimuli/img_koooi.png', 'stimuli/img_kost0.png', 'stimuli/img_kq9s9.png', 'stimuli/img_kwxq1.png', 'stimuli/img_kzg3h.png', 'stimuli/img_l1h36.png', 'stimuli/img_l9t30.png', 'stimuli/img_le8uf.png', 'stimuli/img_lgxzn.png', 'stimuli/img_lszzj.png', 'stimuli/img_lzz3x.png', 'stimuli/img_mawe6.png', 'stimuli/img_mdh76.png', 'stimuli/img_mgnmm.png', 'stimuli/img_mjxmq.png', 'stimuli/img_mqnl6.png', 'stimuli/img_mucwi.png', 'stimuli/img_nb8p4.png', 'stimuli/img_ncr40.png', 'stimuli/img_njhlh.png', 'stimuli/img_njmgp.png', 'stimuli/img_nyv2b.png', 'stimuli/img_o30wb.png', 'stimuli/img_o37la.png', 'stimuli/img_okvvw.png', 'stimuli/img_oou46.png', 'stimuli/img_ose78.png', 'stimuli/img_oz18d.png', 'stimuli/img_ozxpp.png', 'stimuli/img_p3hpc.png', 'stimuli/img_p659z.png', 'stimuli/img_pbsj1.png', 'stimuli/img_pdzf1.png', 'stimuli/img_pey7u.png', 'stimuli/img_pjfx6.png', 'stimuli/img_psgf7.png', 'stimuli/img_pt3d7.png', 'stimuli/img_q1ynd.png', 'stimuli/img_q9lab.png', 'stimuli/img_qbdgm.png', 'stimuli/img_qbkdt.png', 'stimuli/img_qdln8.png', 'stimuli/img_qgbyn.png', 'stimuli/img_qmand.png', 'stimuli/img_qmgwq.png', 'stimuli/img_qz292.png', 'stimuli/img_r2lxk.png', 'stimuli/img_r10cu.png', 'stimuli/img_ra2nm.png', 'stimuli/img_rg4in.png', 'stimuli/img_ri0yx.png', 'stimuli/img_rru0v.png', 'stimuli/img_rvssl.png', 'stimuli/img_rych7.png', 'stimuli/img_s2zoe.png', 'stimuli/img_s9are.png', 'stimuli/img_scrdm.png', 'stimuli/img_sfh4b.png', 'stimuli/img_sltwe.png', 'stimuli/img_swq34.png', 'stimuli/img_sx68r.png', 'stimuli/img_t1cr9.png', 'stimuli/img_t2ioc.png', 'stimuli/img_t4hvr.png', 'stimuli/img_t90e2.png', 'stimuli/img_tbs4n.png', 'stimuli/img_tn8ys.png', 'stimuli/img_tujn3.png', 'stimuli/img_tv8e2.png', 'stimuli/img_twj5p.png', 'stimuli/img_u2o6z.png', 'stimuli/img_u9f9l.png', 'stimuli/img_ua9bs.png', 'stimuli/img_uspja.png', 'stimuli/img_uttnz.png', 'stimuli/img_uwv6y.png', 'stimuli/img_uxxo0.png', 'stimuli/img_uy1n4.png', 'stimuli/img_v8dra.png', 'stimuli/img_vbrb7.png', 'stimuli/img_vg73h.png', 'stimuli/img_vgaye.png', 'stimuli/img_vgh2g.png', 'stimuli/img_vnxft.png', 'stimuli/img_w8yhd.png', 'stimuli/img_wbws6.png', 'stimuli/img_wgddx.png', 'stimuli/img_wijef.png', 'stimuli/img_wppku.png', 'stimuli/img_wyctg.png', 'stimuli/img_wyl6z.png', 'stimuli/img_wz6x5.png', 'stimuli/img_x0u5z.png', 'stimuli/img_x4bln.png', 'stimuli/img_x9w7o.png', 'stimuli/img_xbtev.png', 'stimuli/img_xdhz2.png', 'stimuli/img_xesl0.png', 'stimuli/img_xr3up.png', 'stimuli/img_xti0z.png', 'stimuli/img_xu1p3.png', 'stimuli/img_xy930.png', 'stimuli/img_xzyzy.png', 'stimuli/img_ye5sl.png', 'stimuli/img_yeh72.png', 'stimuli/img_yteqw.png', 'stimuli/img_z3yzz.png', 'stimuli/img_z4jxm.png', 'stimuli/img_z5osu.png', 'stimuli/img_z293c.png', 'stimuli/img_zgg62.png', 'stimuli/img_zi8qc.png', 'stimuli/img_zi682.png', 'stimuli/img_zt893.png', 'stimuli/img_zv0dq.png', 'stimuli/img_zxvl3.png', 'stimuli/scenecat_stimulus_selection_summary.xlsx', 'stimuli/stimuli_info_140_equi_range_bins.xlsx', 'stimuli/stimuli_info_140.xlsx', 'stimuli/train_1.jpg', 'stimuli/train_2.jpg', 'stimuli/train_3.jpg', 'stimuli/train_4.jpg', 'stimuli/train_5.jpg', 'stimuli/train_6.jpg', 'stimuli/train_7.jpg', 'stimuli/train_8.jpg', 'stimuli/train_9.jpg', 'stimuli/train_10.jpg', 'stimuli/train_11.jpg', 'stimuli/train_12.jpg', 'stimuli/train_13.jpg', 'stimuli/train_14.jpg', 'stimuli/train_15.jpg', 'stimuli/train_16.jpg', 'stimuli/train_17.jpg', 'stimuli/train_18.jpg', 'stimuli/train_19.jpg', 'stimuli/train_20.jpg', 'conditions_block_order', 'conditions_cat_kitchen_b', 'conditions_cat_kitchen_a', 'conditions_cat_living_b', 'conditions_cat_living_a', 'conditions_cat_sleep_b', 'conditions_cat_sleep_a', 'conditions_memo_kitchen_b', 'conditions_memo_kitchen_a', 'conditions_memo_living_b', 'conditions_memo_living_a', 'conditions_memo_sleep_b', 'conditions_memo_sleep_a']
      startVal [time (s)] = 0
  Routine data_3
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  Routine data_safety
    RoutineSettingsComponent data_safety
      saveStartStop = False
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    TextComponent data_safety_text
      disabled = True
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 10
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      text:
        Datenschutzerklärung
        1. Umfang der Datenerhebung und -verarbeitung: Im Zuge der Studie werden Ihre demographischen Daten (Alter, Geschlecht, Händigkeit) sowie Reaktionszeiten und Korrektheit Ihrer Antworten während des Experiments erhoben. Die im Rahmen dieser Studie erhobenen Daten und persönlichen Mitteilungen werden vertraulich behandelt. Diejenigen Mitarbeiter, die durch direkten Kontakt mit Ihnen über personenbezogene Daten verfügen, unterliegen der Schweigepflicht.  Die Erhebung der Daten erfolgt vollständig anonymisiert, d. h.  an keiner Stelle wird Ihr Name erfragt. Die anonymisierten Daten werden mindestens 10 Jahre gespeichert. Dazu werden Ihre Daten am Ende der Sitzung ohne Angabe Ihres Namens abgespeichert, d.h. in anonymisierter Form. Ab diesem Zeitpunkt können ihre Daten nicht mehr mit ihrer Person in Verbindung gebracht werden, d.h. eine Identifizierung Ihrer Daten ist dann nicht mehr möglich. Deshalb können wir Ihrem Verlangen nach Löschung Ihrer Daten nur so lange nachkommen, bis diese in anonymisierter Form abgespeichert worden sind. Die Ergebnisse und Daten dieser Studie werden als wissenschaftliche Publikation veröffentlicht. Dies geschieht in anonymisierter Form, d.h. ohne dass die Daten einer spezifischen Person zugeordnet werden. Die vollständig anonymisierten Daten dieser Studie werden als offene Daten in einem sicheren, internetbasierten Datenarchiv (z.B. OSF, ZPID, GESIS etc.) zugänglich gemacht. Damit folgt diese Studie den Empfehlungen der Deutschen Forschungsgemeinschaft (DFG) und der Deutschen Gesellschaft für Psychologie (DGPs) zur Qualitätssicherung in der Forschung.
        2. Rechtsgrundlage: Die Rechtsgrundlage zur Verarbeitung der genannten personenbezogenen Daten bildet die Einwilligung gemäß Art. 6 (1) Buchstabe a EU-DSGVO.
    ResourceManagerComponent resources_data_safety
      actionType = Start Only
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['stimuli/img_di49w.jpg', 'stimuli/img_die1d.jpg', 'stimuli/img_diq9d.jpg', 'stimuli/img_dj2t0.jpg', 'stimuli/img_dkqas.jpg', 'stimuli/img_dl98k.jpg', 'stimuli/img_dmjh8.jpg', 'stimuli/img_dmvt8.jpg', 'stimuli/img_dosim.jpg', 'stimuli/img_dpu2p.jpg', 'stimuli/img_dqvoa.jpg', 'stimuli/img_dqyvt.jpg', 'stimuli/img_drpe9.jpg', 'stimuli/img_drqfp.jpg', 'stimuli/img_ds88w.jpg', 'stimuli/img_dt41h.jpg', 'stimuli/img_dtieb.jpg', 'stimuli/img_duf05.jpg', 'stimuli/img_durse.jpg', 'stimuli/img_dv86p.jpg', 'stimuli/img_dvfra.jpg', 'stimuli/img_dwe2q.jpg', 'stimuli/img_dwpyn.jpg', 'stimuli/img_e0hwx.jpg', 'stimuli/img_e0ksg.jpg', 'stimuli/img_e3a7p.jpg', 'stimuli/img_e6n5t.jpg', 'stimuli/img_e26ut.jpg', 'stimuli/img_e44sl.jpg', 'stimuli/img_eabk8.jpg', 'stimuli/img_eatdk.jpg', 'stimuli/img_eaud2.jpg', 'stimuli/img_ebg42.jpg', 'stimuli/img_ee96u.jpg', 'stimuli/img_eez6j.jpg', 'stimuli/img_efhdh.jpg', 'stimuli/img_eg19b.jpg', 'stimuli/img_egb0s.jpg', 'stimuli/img_egzbl.jpg', 'stimuli/img_eh0no.jpg', 'stimuli/img_ehnxi.jpg', 'stimuli/img_eiu3c.jpg', 'stimuli/img_ejfm6.jpg', 'stimuli/img_ejjkj.jpg', 'stimuli/img_ejwww.jpg', 'stimuli/img_ejy8e.jpg', 'stimuli/img_ektr9.jpg', 'stimuli/img_emh91.jpg', 'stimuli/img_emvfr.jpg', 'stimuli/img_en8jg.jpg', 'stimuli/img_en9rm.jpg', 'stimuli/img_ena0p.jpg', 'stimuli/img_enn1x.jpg', 'stimuli/img_ensho.jpg', 'stimuli/img_ep619.jpg', 'stimuli/img_epedy.jpg', 'stimuli/img_eppte.jpg', 'stimuli/img_es7o2.jpg', 'stimuli/img_es115.jpg', 'stimuli/img_esb4r.jpg', 'stimuli/img_esfc0.jpg', 'stimuli/img_est9c.jpg', 'stimuli/img_evl9v.jpg', 'stimuli/img_ewrjk.jpg', 'stimuli/img_exh85.jpg', 'stimuli/img_exngf.jpg', 'stimuli/img_exxip.jpg', 'stimuli/img_f4jxo.jpg', 'stimuli/img_f6ujf.jpg', 'stimuli/img_f7p1m.jpg', 'stimuli/img_f9rr6.jpg', 'stimuli/img_f10v5.jpg', 'stimuli/img_f14d7.jpg', 'stimuli/img_f63yi.jpg', 'stimuli/img_faly8.jpg', 'stimuli/img_fbihy.jpg', 'stimuli/img_fbr46.jpg', 'stimuli/img_fcfjj.jpg', 'stimuli/img_fea1z.jpg', 'stimuli/img_fejeo.jpg', 'stimuli/img_ff3f3.jpg', 'stimuli/img_ffc83.jpg', 'stimuli/img_fhm45.jpg', 'stimuli/img_fi08p.jpg', 'stimuli/img_fl5cd.jpg', 'stimuli/img_fmgjx.jpg', 'stimuli/img_fnopw.jpg', 'stimuli/img_fnu4h.jpg', 'stimuli/img_fpqc0.jpg', 'stimuli/img_fq6gu.jpg', 'stimuli/img_fqcvd.jpg', 'stimuli/img_fqgem.jpg', 'stimuli/img_fsgfk.jpg', 'stimuli/img_fud7l.jpg', 'stimuli/img_fupn0.jpg', 'stimuli/img_fz2ma.jpg', 'stimuli/img_g1f2q.jpg', 'stimuli/img_g1xnc.jpg', 'stimuli/img_g2akb.jpg', 'stimuli/img_g2q8c.jpg', 'stimuli/img_g7pt8.jpg', 'stimuli/img_g9od8.jpg', 'stimuli/img_g13d5.jpg', 'stimuli/img_g35ak.jpg', 'stimuli/img_g40qa.jpg', 'stimuli/img_g7870.jpg', 'stimuli/img_gata2.jpg', 'stimuli/img_gb0zn.jpg', 'stimuli/img_gb3bv.jpg', 'stimuli/img_gbypq.jpg', 'stimuli/img_gc501.jpg', 'stimuli/img_gd1sw.jpg', 'stimuli/img_gdfwi.jpg', 'stimuli/img_geavj.jpg', 'stimuli/img_gfmug.jpg', 'stimuli/img_gi6cy.jpg', 'stimuli/img_gid3m.jpg', 'stimuli/img_gka64.jpg', 'stimuli/img_gnmb6.jpg', 'stimuli/img_gnxyk.jpg', 'stimuli/img_gos7h.jpg', 'stimuli/img_gpkj3.jpg', 'stimuli/img_gpywr.jpg', 'stimuli/img_gq05l.jpg', 'stimuli/img_gquyw.jpg', 'stimuli/img_gqy6z.jpg', 'stimuli/img_grurj.jpg', 'stimuli/img_gsfx4.jpg', 'stimuli/img_guobl.jpg', 'stimuli/img_gv750.jpg', 'stimuli/img_gw408.jpg', 'stimuli/img_gwss6.jpg', 'stimuli/img_gxm46.jpg', 'stimuli/img_gym7g.jpg', 'stimuli/img_gzbdr.jpg', 'stimuli/img_gztbt.jpg', 'stimuli/img_h0hbk.jpg', 'stimuli/img_h0px5.jpg', 'stimuli/img_h1r0g.jpg', 'stimuli/img_h1t95.jpg', 'stimuli/img_h1yyu.jpg', 'stimuli/img_h2avx.jpg', 'stimuli/img_h2i7r.jpg', 'stimuli/img_h4cfz.jpg', 'stimuli/img_h06l0.jpg', 'stimuli/img_h6zqc.jpg', 'stimuli/img_h7awa.jpg', 'stimuli/img_h7lqc.jpg', 'stimuli/img_h8c1f.jpg', 'stimuli/img_h9y8n.jpg', 'stimuli/img_h13c3.jpg', 'stimuli/img_hai5z.jpg', 'stimuli/img_hapth.jpg', 'stimuli/img_hbemf.jpg', 'stimuli/img_hbm4l.jpg', 'stimuli/img_hc7o8.jpg', 'stimuli/img_hc49v.jpg', 'stimuli/img_hdt5e.jpg', 'stimuli/img_hfj08.jpg', 'stimuli/img_hfte7.jpg', 'stimuli/khfp.jpg', 'stimuli/kjhgfdfgh.jpg', 'stimuli/lituryeyxcfvghjk.jpg', 'stimuli/lkjhgfdxsdfghj.jpg', 'stimuli/oelkjhgfcfghjk.jpg', 'stimuli/sdfghj.jpg', 'stimuli/sdfghjklkjbv.jpg', 'stimuli/sdfghnb.jpg', 'stimuli/uhnbgh.jpg', 'stimuli/uhnnfhj.jpg', 'stimuli/uzgfvbnh.jpg', 'stimuli/vfghbvgh.jpg', 'stimuli/wdvhujn.jpg', 'stimuli/wertzujhg.jpg', 'stimuli/zgfdetz.jpg', 'stimuli/ztfcvbnhg.jpg']
      startVal [time (s)] = 0
    TextComponent data_safety_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Datenschutzerklärung
        1. Umfang der Datenerhebung und -verarbeitung: Im Zuge der Studie werden Ihre demographischen Daten (Alter, Geschlecht, Händigkeit) sowie Reaktionszeiten und Korrektheit Ihrer Antworten während des Experiments erhoben. Die im Rahmen dieser Studie erhobenen Daten und persönlichen Mitteilungen werden vertraulich behandelt. Diejenigen Mitarbeiter, die durch direkten Kontakt mit Ihnen über personenbezogene Daten verfügen, unterliegen der Schweigepflicht.  Die Erhebung der Daten erfolgt vollständig anonymisiert, d. h.  an keiner Stelle wird Ihr Name erfragt. Die anonymisierten Daten werden mindestens 10 Jahre gespeichert. Dazu werden Ihre Daten am Ende der Sitzung ohne Angabe Ihres Namens abgespeichert, d.h. in anonymisierter Form. Ab diesem Zeitpunkt können ihre Daten nicht mehr mit ihrer Person in Verbindung gebracht werden, d.h. eine Identifizierung Ihrer Daten ist dann nicht mehr möglich. Deshalb können wir Ihrem Verlangen nach Löschung Ihrer Daten nur so lange nachkommen, bis diese in anonymisierter Form abgespeichert worden sind. Die Ergebnisse und Daten dieser Studie werden als wissenschaftliche Publikation veröffentlicht. Dies geschieht in anonymisierter Form, d.h. ohne dass die Daten einer spezifischen Person zugeordnet werden. Die vollständig anonymisierten Daten dieser Studie werden als offene Daten in einem sicheren, internetbasierten Datenarchiv (z.B. OSF, ZPID, GESIS etc.) zugänglich gemacht. Damit folgt diese Studie den Empfehlungen der Deutschen Forschungsgemeinschaft (DFG) und der Deutschen Gesellschaft für Psychologie (DGPs) zur Qualitätssicherung in der Forschung.
        2. Rechtsgrundlage: Die Rechtsgrundlage zur Verarbeitung der genannten personenbezogenen Daten bildet die Einwilligung gemäß Art. 6 (1) Buchstabe a EU-DSGVO.

        Weiter mit der LEERTASTE.
    KeyboardComponent data_safety_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine data_safety_2
    RoutineSettingsComponent data_safety_2
      saveStartStop = False
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    TextComponent data_safety_2_text_
      disabled = True
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 10
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      text:
        3. Widerruf: Sie haben das Recht, jederzeit die datenschutzrechtliche Einwilligung zu widerrufen. Durch den Widerruf der Einwilligung wird die Rechtmäßigkeit der aufgrund der Einwilligung bis zum Widerruf erfolgten Verarbeitung nicht berührt. (Widerruf mit Wirkung für die Zukunft). Richten Sie den Widerruf an den Verantwortlichen. Ihnen entstehen durch den Widerruf keine Nachteile.
        4. Namen und Anschrift des Verantwortlichen: Der Verantwortliche im Sinne der EU-Datenschutzgrundverordnung (DSGVO) und anderer nationaler Datenschutzgesetze der Mitgliedsstaaten sowie sonstiger datenschutzrechtlicher Bestimmungen ist die Universität Münster, vertreten durch den Rektor, Prof. Dr. Johannes Wessels, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-0, E-Mail: verwaltung@uni-muenster.de. Bei inhaltlichen Rückfragen zum Projekt wenden Sie sich bitte direkt an den fachlichen Ansprechpartner: Prof. Niko Busch, Tel.: + 49 (0) 251 83 34159, E-Mail: niko.busch@uni-muenster.de
        5. Kontaktdaten der Datenschutzbeauftragten: Die Datenschutzbeauftragte der Universität Münster ist:, Nina Meyer-Pachur, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-22446, E-Mail: datenschutz@uni-muenster.de
        6. Hinweis auf Rechte der Betroffenen: Gemäß der Datenschutzgrundverordnung haben Sie grundsätzlich das Recht auf: Auskunft (Art 15 DSGVO) , Widerspruch (Art. 21 DSGVO), Datenübertragbarkeit (Art 20 DSGVO), Löschung (Art 17 DSGVO), Einschränkung der Verarbeitung (Art 18 DSGVO), Berichtigung (Art 16 DSGVO). Möchten Sie eines dieser Rechte in Anspruch nehmen, wenden Sie sich bitte an eine der genannten Kontaktpersonen. Weiterhin haben Sie das Recht, Beschwerde bei der Aufsichtsbehörde einzulegen: Landesbeauftragte für Datenschutz und Informationsfreiheit Nordrhein-Westfalen, Helga Block, Kavalleriestraße 2-4, 40213 Düsseldorf, Telefon: 02 11/384 24-0, E-Mail: poststelle@ldi.nrw.de, Homepage: http://www.ldi.nrw.de
    ResourceManagerComponent resources_data_safety_2
      actionType = Start Only
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['stimuli/img_hfz8w.jpg', 'stimuli/img_hkghg.jpg', 'stimuli/img_hkofm.jpg', 'stimuli/img_hkulp.jpg', 'stimuli/img_hkye1.jpg', 'stimuli/img_hmmlh.jpg', 'stimuli/img_hmmra.jpg', 'stimuli/img_hnu4f.jpg', 'stimuli/img_hpp0m.jpg', 'stimuli/img_hs7yp.jpg', 'stimuli/img_huisn.jpg', 'stimuli/img_i0its.jpg', 'stimuli/img_i1q3w.jpg', 'stimuli/img_i2k07.jpg', 'stimuli/img_i2l9a.jpg', 'stimuli/img_i3eml.jpg', 'stimuli/img_i6wsx.jpg', 'stimuli/img_i7l1f.jpg', 'stimuli/img_i7vab.jpg', 'stimuli/img_i8ivs.jpg', 'stimuli/img_i8t7j.jpg', 'stimuli/img_i48d8.jpg', 'stimuli/img_i64cx.jpg', 'stimuli/img_i84x0.jpg', 'stimuli/img_iaqri.jpg', 'stimuli/img_ic3os.jpg', 'stimuli/img_iebbz.jpg', 'stimuli/img_ifdbq.jpg', 'stimuli/img_ifebc.jpg', 'stimuli/img_ih86d.jpg', 'stimuli/img_ik9n7.jpg', 'stimuli/img_ikk62.jpg', 'stimuli/img_il020.jpg', 'stimuli/img_ilxas.jpg', 'stimuli/img_im869.jpg', 'stimuli/img_imn1t.jpg', 'stimuli/img_inan9.jpg', 'stimuli/img_indf1.jpg', 'stimuli/img_injp0.jpg', 'stimuli/img_inlbv.jpg', 'stimuli/img_inqod.jpg', 'stimuli/img_iomcd.jpg', 'stimuli/img_iqmdm.jpg', 'stimuli/img_isw29.jpg', 'stimuli/img_iudc4.jpg', 'stimuli/img_iuk9x.jpg', 'stimuli/img_ivx6p.jpg', 'stimuli/img_ixn72.jpg', 'stimuli/img_iydb8.jpg', 'stimuli/img_iyxnj.jpg', 'stimuli/img_izc5x.jpg', 'stimuli/img_izuw9.jpg', 'stimuli/img_j0r8b.jpg', 'stimuli/img_j0x19.jpg', 'stimuli/img_j4ttn.jpg', 'stimuli/img_j5nfe.jpg', 'stimuli/img_j5rpx.jpg', 'stimuli/img_j6uoq.jpg', 'stimuli/img_j36ca.jpg', 'stimuli/img_j48t0.jpg', 'stimuli/img_j59kz.jpg', 'stimuli/img_j73b6.jpg', 'stimuli/img_j84mp.jpg', 'stimuli/img_j95nw.jpg', 'stimuli/img_j856a.jpg', 'stimuli/img_jag6g.jpg', 'stimuli/img_janqt.jpg', 'stimuli/img_jbcql.jpg', 'stimuli/img_jcisc.jpg', 'stimuli/img_jdkip.jpg', 'stimuli/img_jdwkq.jpg', 'stimuli/img_jekv7.jpg', 'stimuli/img_jfbpi.jpg', 'stimuli/img_jge7p.jpg', 'stimuli/img_jgqri.jpg', 'stimuli/img_jht4u.jpg', 'stimuli/img_ji4iw.jpg', 'stimuli/img_ji42o.jpg', 'stimuli/img_jivhq.jpg', 'stimuli/img_jkm86.jpg', 'stimuli/img_jlw8j.jpg', 'stimuli/img_jnd9p.jpg', 'stimuli/img_jo3gx.jpg', 'stimuli/img_jp28n.jpg', 'stimuli/img_jpjeg.jpg', 'stimuli/img_jpldg.jpg', 'stimuli/img_jqkok.jpg', 'stimuli/img_jr212.jpg', 'stimuli/img_jt5x9.jpg', 'stimuli/img_jueds.jpg', 'stimuli/img_jukwv.jpg', 'stimuli/img_juob3.jpg', 'stimuli/img_jwfcq.jpg', 'stimuli/img_jxld3.jpg', 'stimuli/img_jz3kd.jpg', 'stimuli/img_jzjqz.jpg', 'stimuli/img_k0m56.jpg', 'stimuli/img_k0ze7.jpg', 'stimuli/img_k1i0k.jpg', 'stimuli/img_k3abb.jpg', 'stimuli/img_k3ouq.jpg', 'stimuli/img_k03rq.jpg', 'stimuli/img_k4zhm.jpg', 'stimuli/img_k6j9e.jpg', 'stimuli/img_k8cba.jpg', 'stimuli/img_kavjj.jpg', 'stimuli/img_kb1xm.jpg', 'stimuli/img_kcpu9.jpg', 'stimuli/img_kd5cu.jpg', 'stimuli/img_kezv3.jpg', 'stimuli/img_kf7vw.jpg', 'stimuli/img_kfm71.jpg', 'stimuli/img_kg1ce.jpg', 'stimuli/img_kg46o.jpg', 'stimuli/img_kisg0.jpg', 'stimuli/img_kjbrh.jpg', 'stimuli/img_kkqxu.jpg', 'stimuli/img_kljj4.jpg', 'stimuli/img_kmd1l.jpg', 'stimuli/img_kn0we.jpg', 'stimuli/img_ko791.jpg', 'stimuli/img_kombf.jpg', 'stimuli/img_koooi.jpg', 'stimuli/img_kost0.jpg', 'stimuli/img_kq9s9.jpg', 'stimuli/img_krd7g.jpg', 'stimuli/img_ksodl.jpg', 'stimuli/img_kt81t.jpg', 'stimuli/img_ktbat.jpg', 'stimuli/img_ktf8f.jpg', 'stimuli/img_ktg8p.jpg', 'stimuli/img_kugyw.jpg', 'stimuli/img_kv1gv.jpg', 'stimuli/img_kwbzo.jpg', 'stimuli/img_kweju.jpg', 'stimuli/img_kwxq1.jpg', 'stimuli/img_kx2b3.jpg', 'stimuli/img_kyn6z.jpg', 'stimuli/img_kzay4.jpg', 'stimuli/img_kzb75.jpg', 'stimuli/img_kzg3h.jpg', 'stimuli/img_kzh5g.jpg', 'stimuli/img_l1eln.jpg', 'stimuli/img_l1h36.jpg', 'stimuli/img_l3yc8.jpg', 'stimuli/img_l6rki.jpg', 'stimuli/img_l9pkc.jpg', 'stimuli/img_l9t30.jpg', 'stimuli/img_l9zdy.jpg', 'stimuli/img_l42rg.jpg', 'stimuli/img_l42rw.jpg', 'stimuli/img_l51hs.jpg', 'stimuli/img_laubq.jpg', 'stimuli/img_ldof4.jpg', 'stimuli/img_ldsb1.jpg', 'stimuli/img_le8uf.jpg', 'stimuli/img_let89.jpg', 'stimuli/img_lezrq.jpg', 'stimuli/img_lgxzn.jpg', 'stimuli/img_lgyo6.jpg']
      startVal [time (s)] = 0
    TextComponent data_safety_2_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        3. Widerruf: Sie haben das Recht, jederzeit die datenschutzrechtliche Einwilligung zu widerrufen. Durch den Widerruf der Einwilligung wird die Rechtmäßigkeit der aufgrund der Einwilligung bis zum Widerruf erfolgten Verarbeitung nicht berührt. (Widerruf mit Wirkung für die Zukunft). Richten Sie den Widerruf an den Verantwortlichen. Ihnen entstehen durch den Widerruf keine Nachteile.
        4. Namen und Anschrift des Verantwortlichen: Der Verantwortliche im Sinne der EU-Datenschutzgrundverordnung (DSGVO) und anderer nationaler Datenschutzgesetze der Mitgliedsstaaten sowie sonstiger datenschutzrechtlicher Bestimmungen ist die Universität Münster, vertreten durch den Rektor, Prof. Dr. Johannes Wessels, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-0, E-Mail: verwaltung@uni-muenster.de. Bei inhaltlichen Rückfragen zum Projekt wenden Sie sich bitte direkt an den fachlichen Ansprechpartner: Prof. Niko Busch, Tel.: + 49 (0) 251 83 34159, E-Mail: niko.busch@uni-muenster.de
        5. Kontaktdaten der Datenschutzbeauftragten: Die Datenschutzbeauftragte der Universität Münster ist:, Nina Meyer-Pachur, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-22446, E-Mail: datenschutz@uni-muenster.de
        6. Hinweis auf Rechte der Betroffenen: Gemäß der Datenschutzgrundverordnung haben Sie grundsätzlich das Recht auf: Auskunft (Art 15 DSGVO) , Widerspruch (Art. 21 DSGVO), Datenübertragbarkeit (Art 20 DSGVO), Löschung (Art 17 DSGVO), Einschränkung der Verarbeitung (Art 18 DSGVO), Berichtigung (Art 16 DSGVO). Möchten Sie eines dieser Rechte in Anspruch nehmen, wenden Sie sich bitte an eine der genannten Kontaktpersonen. Weiterhin haben Sie das Recht, Beschwerde bei der Aufsichtsbehörde einzulegen: Landesbeauftragte für Datenschutz und Informationsfreiheit Nordrhein-Westfalen, Helga Block, Kavalleriestraße 2-4, 40213 Düsseldorf, Telefon: 02 11/384 24-0, E-Mail: poststelle@ldi.nrw.de, Homepage: http://www.ldi.nrw.de

        Drücken Sie die LEERTASTE, um zu bestätigen und fortzufahren.
    KeyboardComponent data_safety_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_cat
    RoutineSettingsComponent instructions_cat
      saveStartStop = False
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    TextComponent instructions_cat_text
      disabled = True
      letterHeight = 0.026
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 25
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      text:
        Instruktion

        Das Experiment besteht aus einem Übungsblock und sechs darauf folgenden Blöcken mit jeweils zwei Teilen.

        Zu Beginn jedes Blocks wird Ihnen eine bestimmte Raumkategorie genannt, z.B. Wohnzimmer. Im ersten Teil des Blocks ist es dann Ihre Aufgabe, die gezeigten Bilder zu kategorisieren.
        Hierfür drücken Sie bitte so SCHNELL wie möglich die Taste "f", wenn das Bild NICHT zur genannten Kategorie gehört und die Taste "j", wenn das Bild zur genannten Kategorie gehört.

        Im zweiten Teil des Blocks folgt ein Gedächtnistest, bei dem Ihnen wieder Bilder präsentiert werden. Sie müssen anschließend für jedes Bild angeben, ob es im ersten Teil des Blocks in der Kategorisierungsaufgabe gezeigt wurde und wie sicher Sie sich mit Ihrer Antwort sind.
        Als Antwortmöglichkeiten stehen zur Auswahl: "sicher alt", "eher alt", "eher neu", "sicher neu". Hierbei bedeutet "alt", dass das Bild in der vorherigen Aufgabe gezeigt wurde und "neu", dass das Bild noch nicht gezeigt wurde. Drücken Sie die Taste mit der entsprechenden Option.

        In beiden Teilen wird Ihnen zwischen den Bildern ein Fixationskreuz in der Mitte des Bildschirms präsentiert. Bitte halten Sie während des gesamten Blocks den Blick immer auf diese Position gerichtet.

        Bevor die Aufgabe beginnt, wird es einen Übungsblock durch beide Aufgabenteile geben. In diesem wird Ihnen nach jeder Antwort eingeblendet, ob Sie korrekt oder falsch geantwortet haben. Dies dient dem besseren Verständnis der Aufgabe.
        Platzieren Sie Ihre Finger am besten schon jetzt auf den Tasten "f" und "j".

        Gleich geht's weiter…
    ResourceManagerComponent resources_instructions_cat
      actionType = Start Only
      checkAll = False
      disabled = True
      forceEndRoutine = False
      resources = ['stimuli/img_lku96.jpg', 'stimuli/img_lo6c4.jpg', 'stimuli/img_lpas9.jpg', 'stimuli/img_lpj57.jpg', 'stimuli/img_lpr0l.jpg', 'stimuli/img_lq6pv.jpg', 'stimuli/img_lqbid.jpg', 'stimuli/img_lqpgn.jpg', 'stimuli/img_lrjaj.jpg', 'stimuli/img_lszzj.jpg', 'stimuli/img_lt0pg.jpg', 'stimuli/img_luk7x.jpg', 'stimuli/img_lvuz8.jpg', 'stimuli/img_lysx3.jpg', 'stimuli/img_lzix2.jpg', 'stimuli/img_lzz3x.jpg', 'stimuli/img_m1m03.jpg', 'stimuli/img_m2gan.jpg', 'stimuli/img_m03ns.jpg', 'stimuli/img_m4w0y.jpg', 'stimuli/img_m6q5q.jpg', 'stimuli/img_m7i17.jpg', 'stimuli/img_m7zn0.jpg', 'stimuli/img_m8krt.jpg', 'stimuli/img_m9db9.jpg', 'stimuli/img_m59op.jpg', 'stimuli/img_m5999.jpg', 'stimuli/img_makxc.jpg', 'stimuli/img_mawe6.jpg', 'stimuli/img_mbdnp.jpg', 'stimuli/img_mbwpx.jpg', 'stimuli/img_mc6a7.jpg', 'stimuli/img_md6k3.jpg', 'stimuli/img_md42t.jpg', 'stimuli/img_mdh76.jpg', 'stimuli/img_mdlpz.jpg', 'stimuli/img_mdpr4.jpg', 'stimuli/img_mdso0.jpg', 'stimuli/img_mgicq.jpg', 'stimuli/img_mgnmm.jpg', 'stimuli/img_mgz7m.jpg', 'stimuli/img_mh6x6.jpg', 'stimuli/img_mhh9m.jpg', 'stimuli/img_mhkzb.jpg', 'stimuli/img_mjxmq.jpg', 'stimuli/img_mkd9h.jpg', 'stimuli/img_mnorf.jpg', 'stimuli/img_moplo.jpg', 'stimuli/img_mpbxf.jpg', 'stimuli/img_mpi7m.jpg', 'stimuli/img_mqnl6.jpg', 'stimuli/img_mr7a9.jpg', 'stimuli/img_msawn.jpg', 'stimuli/img_mucwi.jpg', 'stimuli/img_mvoj8.jpg', 'stimuli/img_myy0m.jpg', 'stimuli/img_n03fu.jpg', 'stimuli/img_n3xxp.jpg', 'stimuli/img_n5b2k.jpg', 'stimuli/img_n5ohn.jpg', 'stimuli/img_n6mqe.jpg', 'stimuli/img_n7qvz.jpg', 'stimuli/img_n9teq.jpg', 'stimuli/img_n9xll.jpg', 'stimuli/img_n33fg.jpg', 'stimuli/img_n42jt.jpg', 'stimuli/img_n474d.jpg', 'stimuli/img_nb8p4.jpg', 'stimuli/img_ncr40.jpg', 'stimuli/img_ncy2j.jpg', 'stimuli/img_nfbnr.jpg', 'stimuli/img_njear.jpg', 'stimuli/img_njhlh.jpg', 'stimuli/img_njmgp.jpg', 'stimuli/img_nn7hq.jpg', 'stimuli/img_nnbe1.jpg', 'stimuli/img_nng17.jpg', 'stimuli/img_np28f.jpg', 'stimuli/img_npkd5.jpg', 'stimuli/img_nptnl.jpg', 'stimuli/img_nq3rf.jpg', 'stimuli/img_nr8nj.jpg', 'stimuli/img_nv5xw.jpg', 'stimuli/img_nvwkl.jpg', 'stimuli/img_nyu3q.jpg', 'stimuli/img_nyv2b.jpg', 'stimuli/img_nzgtz.jpg', 'stimuli/img_nzqfw.jpg', 'stimuli/img_o0n1u.jpg', 'stimuli/img_o0onm.jpg', 'stimuli/img_o2lar.jpg', 'stimuli/img_o5afe.jpg', 'stimuli/img_o6cff.jpg', 'stimuli/img_o7iev.jpg', 'stimuli/img_o8tf1.jpg', 'stimuli/img_o9czo.jpg', 'stimuli/img_o9og9.jpg', 'stimuli/img_o19em.jpg', 'stimuli/img_o30wb.jpg', 'stimuli/img_o33w3.jpg', 'stimuli/img_o37la.jpg', 'stimuli/img_oadw2.jpg', 'stimuli/img_oau79.jpg', 'stimuli/img_oavm6.jpg', 'stimuli/img_oeddm.jpg', 'stimuli/img_of8d6.jpg', 'stimuli/img_ogcv5.jpg', 'stimuli/img_ohtbu.jpg', 'stimuli/img_oieot.jpg', 'stimuli/img_oimxl.jpg', 'stimuli/img_oiusw.jpg', 'stimuli/img_ok82a.jpg', 'stimuli/img_okvvw.jpg', 'stimuli/img_olep6.jpg', 'stimuli/img_oo0i9.jpg', 'stimuli/img_oou46.jpg', 'stimuli/img_opxap.jpg', 'stimuli/img_os8fo.jpg', 'stimuli/img_os89g.jpg', 'stimuli/img_ose78.jpg', 'stimuli/img_osjck.jpg', 'stimuli/img_otfo3.jpg', 'stimuli/img_otj9x.jpg', 'stimuli/img_owbre.jpg', 'stimuli/img_owg3e.jpg', 'stimuli/img_owq46.jpg', 'stimuli/img_oxcuq.jpg', 'stimuli/img_oxf89.jpg', 'stimuli/img_oz18d.jpg', 'stimuli/img_ozluf.jpg', 'stimuli/img_ozowa.jpg', 'stimuli/img_ozxpp.jpg', 'stimuli/img_p3c7o.jpg', 'stimuli/img_p3hpc.jpg', 'stimuli/img_p4oj7.jpg', 'stimuli/img_p4vf0.jpg', 'stimuli/img_p8das.jpg', 'stimuli/img_p8jss.jpg', 'stimuli/img_p9d3u.jpg', 'stimuli/img_p43sm.jpg', 'stimuli/img_p347u.jpg', 'stimuli/img_p659z.jpg', 'stimuli/img_pbsj1.jpg', 'stimuli/img_pcl29.jpg', 'stimuli/img_pdl2o.jpg', 'stimuli/img_pdzf1.jpg', 'stimuli/img_pey7u.jpg', 'stimuli/img_pey9d.jpg', 'stimuli/img_pfjtx.jpg', 'stimuli/img_pflhy.jpg', 'stimuli/img_pgiog.jpg', 'stimuli/img_pgxzn.jpg', 'stimuli/img_phof9.jpg', 'stimuli/img_pi7sb.jpg', 'stimuli/img_piyzo.jpg', 'stimuli/img_pja09.jpg', 'stimuli/img_pjfx6.jpg', 'stimuli/img_plp16.jpg', 'stimuli/img_pn8ex.jpg', 'stimuli/img_pna7l.jpg', 'stimuli/img_pp4ha.jpg', 'stimuli/img_pqmsq.jpg', 'stimuli/img_ps986.jpg', 'stimuli/img_psgf7.jpg', 'stimuli/img_pstl3.jpg', 'stimuli/img_psuqq.jpg', 'stimuli/img_pt3d7.jpg', 'stimuli/img_ptsls.jpg', 'stimuli/img_puzub.jpg', 'stimuli/img_pwzku.jpg', 'stimuli/img_pxdo9.jpg', 'stimuli/img_pxhcp.jpg', 'stimuli/img_py5yk.jpg', 'stimuli/img_py7rq.jpg', 'stimuli/img_q1dcp.jpg', 'stimuli/img_q1pin.jpg', 'stimuli/img_q1ynd.jpg', 'stimuli/img_q3mdq.jpg', 'stimuli/img_q5ldz.jpg', 'stimuli/img_q5tqy.jpg', 'stimuli/img_q7p8m.jpg', 'stimuli/img_q8u19.jpg', 'stimuli/img_q9a89.jpg', 'stimuli/img_q9lab.jpg', 'stimuli/img_q9wzp.jpg', 'stimuli/img_q086i.jpg', 'stimuli/img_q577a.jpg', 'stimuli/img_q0711.jpg', 'stimuli/img_qb2nc.jpg', 'stimuli/img_qb95w.jpg', 'stimuli/img_qbdgm.jpg', 'stimuli/img_qbkdt.jpg', 'stimuli/img_qc2ss.jpg', 'stimuli/img_qdi9n.jpg', 'stimuli/img_qdln8.jpg', 'stimuli/img_qdry3.jpg', 'stimuli/img_qevid.jpg', 'stimuli/img_qf1bp.jpg', 'stimuli/img_qgbyn.jpg', 'stimuli/img_qgyas.jpg', 'stimuli/img_qh2z2.jpg', 'stimuli/img_qihxi.jpg', 'stimuli/img_qiib2.jpg', 'stimuli/img_qkojj.jpg', 'stimuli/img_qkuvg.jpg', 'stimuli/img_qmand.jpg', 'stimuli/img_qmgwq.jpg', 'stimuli/img_qmo79.jpg', 'stimuli/img_qmveb.jpg', 'stimuli/img_qneik.jpg', 'stimuli/img_qnmhk.jpg', 'stimuli/img_qom5l.jpg', 'stimuli/img_qp63u.jpg', 'stimuli/img_qqkbi.jpg', 'stimuli/img_qr54p.jpg', 'stimuli/img_qrc78.jpg', 'stimuli/img_qtvud.jpg', 'stimuli/img_qwfdj.jpg', 'stimuli/img_qwjcs.jpg', 'stimuli/img_qwtnc.jpg', 'stimuli/img_qxnyp.jpg', 'stimuli/img_qxryo.jpg', 'stimuli/img_qys69.jpg', 'stimuli/img_qywyi.jpg', 'stimuli/img_qz292.jpg', 'stimuli/img_qzmmi.jpg', 'stimuli/img_qzvnm.jpg', 'stimuli/img_r0jzd.jpg', 'stimuli/img_r2e5e.jpg', 'stimuli/img_r2iwq.jpg', 'stimuli/img_r2lxk.jpg', 'stimuli/img_r3i5r.jpg', 'stimuli/img_r4bih.jpg', 'stimuli/img_r4kgh.jpg', 'stimuli/img_r6gnz.jpg', 'stimuli/img_r8rvk.jpg', 'stimuli/img_r10cu.jpg', 'stimuli/img_r77yy.jpg', 'stimuli/img_r93m2.jpg', 'stimuli/img_r97z5.jpg', 'stimuli/img_ra2nm.jpg', 'stimuli/img_rav8j.jpg', 'stimuli/img_rb81s.jpg', 'stimuli/img_ret8n.jpg', 'stimuli/img_reur3.jpg', 'stimuli/img_rf540.jpg', 'stimuli/img_rg4in.jpg', 'stimuli/img_ri0yx.jpg', 'stimuli/img_riuqe.jpg', 'stimuli/img_rktqz.jpg', 'stimuli/img_rm970.jpg', 'stimuli/img_rp7y5.jpg', 'stimuli/img_rpdms.jpg', 'stimuli/img_rru0v.jpg', 'stimuli/img_rs1ci.jpg', 'stimuli/img_rs698.jpg', 'stimuli/img_rscpb.jpg', 'stimuli/img_rsq73.jpg', 'stimuli/img_ru898.jpg', 'stimuli/img_rubqw.jpg', 'stimuli/img_rutfm.jpg', 'stimuli/img_rv6im.jpg', 'stimuli/img_rv94l.jpg', 'stimuli/img_rvssl.jpg', 'stimuli/img_rwni4.jpg', 'stimuli/img_rwrwh.jpg', 'stimuli/img_rx5aw.jpg', 'stimuli/img_rxvls.jpg', 'stimuli/img_rych7.jpg', 'stimuli/img_ryeok.jpg', 'stimuli/img_rzbn4.jpg', 'stimuli/img_s1t24.jpg', 'stimuli/img_s2adu.jpg', 'stimuli/img_s2zoe.jpg', 'stimuli/img_s3jnm.jpg', 'stimuli/img_s3ngq.jpg', 'stimuli/img_s4mc1.jpg', 'stimuli/img_s5pjy.jpg', 'stimuli/img_s7fln.jpg', 'stimuli/img_s8wty.jpg', 'stimuli/img_s9are.jpg', 'stimuli/img_s27ju.jpg', 'stimuli/img_s37yz.jpg', 'stimuli/img_s044n.jpg', 'stimuli/img_s58iu.jpg', 'stimuli/img_scgrr.jpg', 'stimuli/img_scrdm.jpg', 'stimuli/img_sds4p.jpg', 'stimuli/img_sdt7q.jpg', 'stimuli/img_sebb3.jpg', 'stimuli/img_sf1lc.jpg', 'stimuli/img_sfh4b.jpg', 'stimuli/img_sfq2m.jpg', 'stimuli/img_sgt5b.jpg', 'stimuli/img_sgwc6.jpg', 'stimuli/img_sh0eu.jpg', 'stimuli/img_shopj.jpg', 'stimuli/img_si5ct.jpg', 'stimuli/img_sjwso.jpg', 'stimuli/img_sk2ou.jpg', 'stimuli/img_sldxx.jpg', 'stimuli/img_sltwe.jpg', 'stimuli/img_sojqy.jpg', 'stimuli/img_sqvv6.jpg', 'stimuli/img_su4ip.jpg', 'stimuli/img_svf0q.jpg', 'stimuli/img_svpek.jpg', 'stimuli/img_svtxr.jpg', 'stimuli/img_swcci.jpg', 'stimuli/img_swjli.jpg', 'stimuli/img_swq34.jpg', 'stimuli/img_swrxs.jpg', 'stimuli/img_swx2d.jpg', 'stimuli/img_sx68r.jpg', 'stimuli/img_sxgfb.jpg', 'stimuli/img_sxyb5.jpg', 'stimuli/img_syam3.jpg', 'stimuli/img_syyee.jpg', 'stimuli/img_t0a2l.jpg', 'stimuli/img_t1cr9.jpg', 'stimuli/img_t1fjg.jpg', 'stimuli/img_t2bng.jpg', 'stimuli/img_t2ioc.jpg', 'stimuli/img_t3d7r.jpg', 'stimuli/img_t3fqu.jpg', 'stimuli/img_t3htz.jpg', 'stimuli/img_t3r1g.jpg', 'stimuli/img_t4hvr.jpg', 'stimuli/img_t4n50.jpg', 'stimuli/img_t4sid.jpg', 'stimuli/img_t4xel.jpg', 'stimuli/img_t5naw.jpg', 'stimuli/img_t6kah.jpg', 'stimuli/img_t6rsv.jpg', 'stimuli/img_t27my.jpg', 'stimuli/img_t44om.jpg', 'stimuli/img_t90e2.jpg', 'stimuli/img_tbs4n.jpg', 'stimuli/img_tdabb.jpg', 'stimuli/img_te3lf.jpg', 'stimuli/img_tehqm.jpg', 'stimuli/img_tejio.jpg', 'stimuli/img_tfavl.jpg', 'stimuli/img_th7xh.jpg', 'stimuli/img_tj2c5.jpg', 'stimuli/img_tj6dy.jpg', 'stimuli/img_tk0cz.jpg', 'stimuli/img_tk15d.jpg', 'stimuli/img_tl4pg.jpg', 'stimuli/img_tlirb.jpg', 'stimuli/img_tmxgq.jpg', 'stimuli/img_tn8ys.jpg', 'stimuli/img_to58w.jpg', 'stimuli/img_tqo7w.jpg', 'stimuli/img_tr42p.jpg', 'stimuli/img_tseae.jpg', 'stimuli/img_tsf9y.jpg', 'stimuli/img_ttz6v.jpg', 'stimuli/img_tui7c.jpg', 'stimuli/img_tujn3.jpg', 'stimuli/img_tv8e2.jpg', 'stimuli/img_tw4o4.jpg', 'stimuli/img_tw371.jpg', 'stimuli/img_twj5p.jpg', 'stimuli/img_u1i9n.jpg', 'stimuli/img_u1llj.jpg', 'stimuli/img_u1rxv.jpg', 'stimuli/img_u1smj.jpg', 'stimuli/img_u1zu9.jpg', 'stimuli/img_u2o6z.jpg', 'stimuli/img_u4w09.jpg', 'stimuli/img_u5hpm.jpg', 'stimuli/img_u8kqw.jpg', 'stimuli/img_u8vwr.jpg', 'stimuli/img_u8ww8.jpg', 'stimuli/img_u9f9l.jpg', 'stimuli/img_u61vc.jpg', 'stimuli/img_ua9bs.jpg', 'stimuli/img_uaieh.jpg', 'stimuli/img_ub01k.jpg', 'stimuli/img_ub3bp.jpg', 'stimuli/img_ub9nn.jpg', 'stimuli/img_ubf63.jpg', 'stimuli/img_ubgi0.jpg', 'stimuli/img_uc67x.jpg', 'stimuli/img_uch3x.jpg', 'stimuli/img_uegbb.jpg', 'stimuli/img_uhmld.jpg', 'stimuli/img_ukx4f.jpg', 'stimuli/img_ulgl4.jpg', 'stimuli/img_um93g.jpg', 'stimuli/img_un4mu.jpg', 'stimuli/img_uof42.jpg', 'stimuli/img_upuu2.jpg', 'stimuli/img_uq6e0.jpg', 'stimuli/img_uqf3j.jpg', 'stimuli/img_ur4j0.jpg', 'stimuli/img_uso44.jpg', 'stimuli/img_uspja.jpg', 'stimuli/img_uttnz.jpg', 'stimuli/img_uwv6y.jpg', 'stimuli/img_uxlg0.jpg', 'stimuli/img_uxxo0.jpg', 'stimuli/img_uy1n4.jpg', 'stimuli/img_uzati.jpg', 'stimuli/img_uzy3h.jpg', 'stimuli/img_v0i83.jpg', 'stimuli/img_v00yc.jpg', 'stimuli/img_v2z5q.jpg', 'stimuli/img_v5dph.jpg', 'stimuli/img_v6kq9.jpg', 'stimuli/img_v6oqe.jpg', 'stimuli/img_v7eom.jpg', 'stimuli/img_v7r9g.jpg', 'stimuli/img_v7vwy.jpg', 'stimuli/img_v8dra.jpg', 'stimuli/img_v8lnh.jpg', 'stimuli/img_v8z0x.jpg', 'stimuli/img_v9pm7.jpg', 'stimuli/img_v60rh.jpg', 'stimuli/img_v176l.jpg', 'stimuli/img_v455z.jpg', 'stimuli/img_v759b.jpg', 'stimuli/img_v771n.jpg', 'stimuli/img_v6435.jpg', 'stimuli/img_v8130.jpg', 'stimuli/img_vad83.jpg', 'stimuli/img_vbgti.jpg', 'stimuli/img_vbrb7.jpg', 'stimuli/img_vctdl.jpg', 'stimuli/img_vg73h.jpg', 'stimuli/img_vgaye.jpg', 'stimuli/img_vgg17.jpg', 'stimuli/img_vgh2g.jpg', 'stimuli/img_vh7v8.jpg', 'stimuli/img_vjlaz.jpg', 'stimuli/img_vlham.jpg', 'stimuli/img_vn2f7.jpg', 'stimuli/img_vnxft.jpg', 'stimuli/img_vpukg.jpg', 'stimuli/img_vqoy9.jpg', 'stimuli/img_vsi8r.jpg', 'stimuli/img_vszud.jpg', 'stimuli/img_vwrot.jpg', 'stimuli/img_vx3gs.jpg', 'stimuli/img_vxr2x.jpg', 'stimuli/img_vyrq8.jpg', 'stimuli/img_vz25d.jpg', 'stimuli/img_w1hql.jpg', 'stimuli/img_w5vvu.jpg', 'stimuli/img_w6vl1.jpg', 'stimuli/img_w8hcx.jpg', 'stimuli/img_w8ilf.jpg', 'stimuli/img_w8jfk.jpg', 'stimuli/img_w8yhd.jpg', 'stimuli/img_w29lp.jpg', 'stimuli/img_w45yf.jpg', 'stimuli/img_w3271.jpg', 'stimuli/img_wb1os.jpg', 'stimuli/img_wbws6.jpg', 'stimuli/img_wcdw9.jpg', 'stimuli/img_we7h7.jpg', 'stimuli/img_wfdg9.jpg', 'stimuli/img_wgddx.jpg', 'stimuli/img_wgkqa.jpg', 'stimuli/img_wgvt7.jpg', 'stimuli/img_wi06o.jpg', 'stimuli/img_wijef.jpg', 'stimuli/img_wiwqu.jpg', 'stimuli/img_wixv2.jpg', 'stimuli/img_wjjqy.jpg', 'stimuli/img_wk81m.jpg', 'stimuli/img_wm47a.jpg', 'stimuli/img_wn462.jpg', 'stimuli/img_wppku.jpg', 'stimuli/img_wrakq.jpg', 'stimuli/img_wri3l.jpg', 'stimuli/img_wtz6m.jpg', 'stimuli/img_wuen7.jpg', 'stimuli/img_wv3dg.jpg', 'stimuli/img_wvzgm.jpg', 'stimuli/img_wwe90.jpg', 'stimuli/img_wwmp0.jpg', 'stimuli/img_wxa5a.jpg', 'stimuli/img_wyctg.jpg', 'stimuli/img_wyl6z.jpg', 'stimuli/img_wz6x5.jpg', 'stimuli/img_wzgy7.jpg', 'stimuli/img_wzsnn.jpg', 'stimuli/img_x0sow.jpg', 'stimuli/img_x0u5z.jpg', 'stimuli/img_x0v7n.jpg', 'stimuli/img_x0zla.jpg', 'stimuli/img_x1c37.jpg', 'stimuli/img_x1lo7.jpg', 'stimuli/img_x3iff.jpg', 'stimuli/img_x4bln.jpg', 'stimuli/img_x8jid.jpg', 'stimuli/img_x8z4x.jpg', 'stimuli/img_x9ml4.jpg', 'stimuli/img_x9w7o.jpg', 'stimuli/img_x50f8.jpg', 'stimuli/img_x63s2.jpg', 'stimuli/img_x388f.jpg', 'stimuli/img_x827l.jpg', 'stimuli/img_xbtev.jpg', 'stimuli/img_xc043.jpg', 'stimuli/img_xd5c3.jpg', 'stimuli/img_xdbq1.jpg', 'stimuli/img_xdhz2.jpg', 'stimuli/img_xe6fa.jpg', 'stimuli/img_xebaj.jpg', 'stimuli/img_xesl0.jpg', 'stimuli/img_xf20k.jpg', 'stimuli/img_xfhmz.jpg', 'stimuli/img_xguy9.jpg', 'stimuli/img_xhe1x.jpg', 'stimuli/img_xhns1.jpg', 'stimuli/img_xib79.jpg', 'stimuli/img_xilm6.jpg', 'stimuli/img_xnqvq.jpg', 'stimuli/img_xnyo5.jpg', 'stimuli/img_xpco9.jpg', 'stimuli/img_xq4tr.jpg', 'stimuli/img_xr3up.jpg', 'stimuli/img_xrzk6.jpg', 'stimuli/img_xsdds.jpg', 'stimuli/img_xt3jt.jpg', 'stimuli/img_xtb79.jpg', 'stimuli/img_xti0z.jpg', 'stimuli/img_xtizs.jpg', 'stimuli/img_xtklg.jpg', 'stimuli/img_xu1p3.jpg', 'stimuli/img_xubpo.jpg', 'stimuli/img_xv2cm.jpg', 'stimuli/img_xwdba.jpg', 'stimuli/img_xy930.jpg', 'stimuli/img_xz4gr.jpg', 'stimuli/img_xzcet.jpg', 'stimuli/img_xzts6.jpg', 'stimuli/img_xzyzy.jpg', 'stimuli/img_y2na4.jpg', 'stimuli/img_y4n97.jpg', 'stimuli/img_y5xn1.jpg', 'stimuli/img_y6u9g.jpg', 'stimuli/img_y9o0x.jpg', 'stimuli/img_y25a7.jpg', 'stimuli/img_yamtw.jpg', 'stimuli/img_ybbmx.jpg', 'stimuli/img_ycgfe.jpg', 'stimuli/img_ydkv8.jpg', 'stimuli/img_ye2a5.jpg', 'stimuli/img_ye5sl.jpg', 'stimuli/img_ye14l.jpg', 'stimuli/img_yeh72.jpg', 'stimuli/img_yf849.jpg', 'stimuli/img_ygb10.jpg', 'stimuli/img_yglfe.jpg', 'stimuli/img_yhiqc.jpg', 'stimuli/img_yjb6e.jpg', 'stimuli/img_yju0d.jpg', 'stimuli/img_ykoa1.jpg', 'stimuli/img_ykxul.jpg', 'stimuli/img_ymgcb.jpg', 'stimuli/img_ymysv.jpg', 'stimuli/img_ynuix.jpg', 'stimuli/img_yorhj.jpg', 'stimuli/img_yosqb.jpg', 'stimuli/img_ypxmx.jpg', 'stimuli/img_yqg5q.jpg', 'stimuli/img_yqoce.jpg', 'stimuli/img_yqr7b.jpg', 'stimuli/img_yqrjj.jpg', 'stimuli/img_yqz1y.jpg', 'stimuli/img_ys3qz.jpg', 'stimuli/img_ysb5z.jpg', 'stimuli/img_yt3ea.jpg', 'stimuli/img_yteqw.jpg', 'stimuli/img_yvvo0.jpg', 'stimuli/img_yxd19.jpg', 'stimuli/img_yxhxk.jpg', 'stimuli/img_yze5s.jpg', 'stimuli/img_z2mg7.jpg', 'stimuli/img_z3yzz.jpg', 'stimuli/img_z4jxm.jpg', 'stimuli/img_z5osu.jpg', 'stimuli/img_z7m8s.jpg', 'stimuli/img_z9aux.jpg', 'stimuli/img_z10c7.jpg', 'stimuli/img_z028x.jpg', 'stimuli/img_z44hw.jpg', 'stimuli/img_z293c.jpg', 'stimuli/img_zac3b.jpg', 'stimuli/img_zcj7v.jpg', 'stimuli/img_zdb2v.jpg', 'stimuli/img_ze7ns.jpg', 'stimuli/img_zfx9o.jpg', 'stimuli/img_zg02f.jpg', 'stimuli/img_zgg62.jpg', 'stimuli/img_zgnbf.jpg', 'stimuli/img_zh8ms.jpg', 'stimuli/img_zi8qc.jpg', 'stimuli/img_zi682.jpg', 'stimuli/img_zj0vx.jpg', 'stimuli/img_zpsau.jpg', 'stimuli/img_zrn6n.jpg', 'stimuli/img_zshx7.jpg', 'stimuli/img_zt893.jpg', 'stimuli/img_ztfay.jpg', 'stimuli/img_ztovt.jpg', 'stimuli/img_zv0dq.jpg', 'stimuli/img_zvi2m.jpg', 'stimuli/img_zxvl3.jpg', 'stimuli/img_zy7pc.jpg', 'stimuli/img_zyhbo.jpg', 'stimuli/img_zz5u8.jpg', 'stimuli/img_zzb9f.jpg', 'stimuli/img_zzv3k.jpg']
      startVal [time (s)] = 0
    TextComponent instructions_cat_text_2
      letterHeight = 0.026
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Instruktion

        Das Experiment besteht aus einem Übungsblock und sechs darauf folgenden Blöcken mit jeweils zwei Teilen.

        Zu Beginn jedes Blocks wird Ihnen eine bestimmte Raumkategorie genannt, z.B. Wohnzimmer. Im ersten Teil des Blocks ist es dann Ihre Aufgabe, die gezeigten Bilder zu kategorisieren.
        Hierfür drücken Sie bitte so SCHNELL wie möglich die Taste "f", wenn das Bild NICHT zur genannten Kategorie gehört und die Taste "j", wenn das Bild zur genannten Kategorie gehört.

        Im zweiten Teil des Blocks folgt ein Gedächtnistest, bei dem Ihnen wieder Bilder präsentiert werden. Sie müssen anschließend für jedes Bild angeben, ob es im ersten Teil des Blocks in der Kategorisierungsaufgabe gezeigt wurde und wie sicher Sie sich mit Ihrer Antwort sind.
        Als Antwortmöglichkeiten stehen zur Auswahl: "sicher alt", "eher alt", "eher neu", "sicher neu". Hierbei bedeutet "alt", dass das Bild in der vorherigen Aufgabe gezeigt wurde und "neu", dass das Bild noch nicht gezeigt wurde. Drücken Sie die Taste mit der entsprechenden Option.

        In beiden Teilen wird Ihnen zwischen den Bildern ein Fixationskreuz in der Mitte des Bildschirms präsentiert. Bitte halten Sie während des gesamten Blocks den Blick immer auf diese Position gerichtet.

        Bevor die Aufgabe beginnt, wird es einen Übungsblock durch beide Aufgabenteile geben. In diesem wird Ihnen nach jeder Antwort eingeblendet, ob Sie korrekt oder falsch geantwortet haben. Dies dient dem besseren Verständnis der Aufgabe.
        Platzieren Sie Ihre Finger am besten schon jetzt auf den Tasten "f" und "j".

        Drücken Sie die LEERTASTE, um einen Testlauf zu starten.
    KeyboardComponent instructions_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine category_test_text
    RoutineSettingsComponent category_test_text
      saveStartStop = False
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    TextComponent category_test_word
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text = Bahnhof
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  Routine fix_categorization_training
    RoutineSettingsComponent fix_categorization_training
      saveStartStop = False
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    CodeComponent random_isi_code_cat_training
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent fix_cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Bahnhof?
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    TextComponent fix_cat_training_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent fix_cat_training_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    ImageComponent fix_cat_training_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine categorization_training
    RoutineSettingsComponent categorization_training
      saveStartStop = False
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    ImageComponent cat_training_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.75
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    ImageComponent cat_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent cat_training_key
      allowedKeys = 'f','j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      storeCorrect = True
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    TextComponent cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Bahnhof?
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    TextComponent cat_training_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent cat_training_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
  Routine cat_training_feedback
    RoutineSettingsComponent cat_training_feedback
      saveStartStop = False
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    CodeComponent cat_train_feedb_code
      Code Type = Auto->JS
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      Begin Routine:
        if cat_training_key.corr == 1:
            cat_training_feedb_eval = "korrekt"
        else:
            cat_training_feedb_eval = "falsch"
    TextComponent cat_train_feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cat_training_feedb_eval
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    TextComponent cat_train_feedb_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        f

        nein
    TextComponent cat_train_feedb_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         j

        ja
    TextComponent cat_train_feedb_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Ist dies ein Bahnhof?
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  Routine start_categorization
    RoutineSettingsComponent start_categorization
      saveStartStop = False
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    TextComponent start_cat_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Der Testdurchlauf ist beendet.

        Während der folgenden Aufgabe wird Ihnen keine Rückmeldung mehr eingeblendet, ob Sie korrekt oder falsch geantwortet haben.

        Drücken Sie die LEERTASTE, um das Experiment zu starten.
    KeyboardComponent start_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine middle_break
    RoutineSettingsComponent middle_break
      saveStartStop = False
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    TextComponent break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Dieser Block des Experimentes ist beendet.

        Drücken Sie die LEERTASTE, um den nächsten Block zu starten.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instruction_memo
    RoutineSettingsComponent instruction_memo
      saveStartStop = False
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    TextComponent instructions_memo_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Jetzt beginnt der Übungsteil für den Gedächtnistest.

        Geben Sie an, ob das gezeigte Bild in der vorherigen Kategorisierungsaufgabe gezeigt wurde und wie sicher Sie sich mit der Antwort sind. Hierbei bedeutet "alt", dass das Bild im ersten Teil gezeigt wurde und "neu", dass das Bild NICHT im ersten Teil gezeigt wurde. Drücken Sie die Taste mit der entsprechenden Option.

        Drücken Sie die LEERTASTE, um einen Testdurchlauf zu starten.
    KeyboardComponent instructions_memo_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memo_fix_isi
    RoutineSettingsComponent memo_fix_isi
      saveStartStop = False
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    CodeComponent random_isi_code_memo
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    ImageComponent memo_fix_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine memo_training
    RoutineSettingsComponent memo_training
      saveStartStop = False
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    ImageComponent memo_training_fix
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent memo_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent memo_training_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n sicher alt', 'f \n eher alt', 'j \n eher neu', 'k \nsicher neu']
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memo_training_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine memo_training_feedback
    RoutineSettingsComponent memo_training_feedback
      saveStartStop = False
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    CodeComponent memo_train_feedb_code
      Code Type = Both
      Begin JS Routine:
        if ((memo_training_slider_key_resp.keys == 'd' || memo_training_slider_key_resp.keys == 'f')) {
            rating = 1;
        }   else {
            rating = 3;
        }

        if (rating == correct_1) {
            memo_train_feedb_eval = 'korrekt';
        } else {
            memo_train_feedb_eval = 'falsch';
        }
      Begin Routine:
        if (memo_training_slider_key_resp.keys == 'd' or memo_training_slider_key_resp.keys == 'f'):
            rating = 1
        else:
            rating = 3

        if rating == correct_1:
            memo_train_feedb_eval = 'korrekt'
        else:
            memo_train_feedb_eval = 'falsch'
    TextComponent memo_train_feedb_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $memo_train_feedb_eval
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  Routine start_memotest
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    TextComponent start_memotest_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Der Testdurchlauf ist beendet.

        Für die folgende Aufgabe wird Ihnen keine Rückmeldung mehr eingeblendet, ob Sie korrekt oder falsch geantwortet haben.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent start_memotest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memotest_task
    RoutineSettingsComponent memotest_task
      saveStartStop = False
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    ImageComponent memotest_task_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent memotest_task_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n sicher alt', 'f \n eher alt', 'j \n eher neu', 'k \nsicher neu']
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memotest_task_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    CodeComponent vpcode_code
      Code Type = Both
      Begin JS Routine:
        vpcode = Math.floor(Math.random() * 900000) + 100000;
      Begin Routine:
        import random
        vpcode = random.randint(100000, 999999)
      End JS Routine:
        psychoJS.experiment.addData("vpcode", vpcode);
      End Routine:
        thisExp.addData('vpcode', vpcode)
    TextComponent end_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme!
        Bitte schicken Sie den unten stehenden Code, an folgende Emailadresse, um die Versuchspersonenstunde zu erhalten:
        p_torw01@uni-muenster.de

        Wo und wie Sie die Unterschrift für Ihre VP-Stunde erhalten, wird Ihnen per Email mitgeteilt.

        Drücken Sie die LEERTASTE, um das Experiment zu beenden.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent vp_code_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $vpcode
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  Routine kitchen_b
    RoutineSettingsComponent kitchen_b
      saveStartStop = False
      skipIf = kitchen_b_categorization_trials.thisN > 0
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    TextComponent kitchen_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent kitchen_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_b_random_isi
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    ImageComponent random_isi_kitchen_b_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_b_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent random_isi_kitchen_b_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        ja
    TextComponent random_isi_kitchen_b_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        nein
    TextComponent random_isi_kitchen_b_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies eine Küche?
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  Routine kitchen_b_picture
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    ImageComponent kitchen_b_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_b_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_b_picture_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        ja
    TextComponent kitchen_b_picture_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        nein
    TextComponent kitchen_b_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies eine Küche?
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    KeyboardComponent kitchen_b_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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  Routine living_a_random_isi
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  Routine kitchen_random_isi
    RoutineSettingsComponent kitchen_random_isi
      saveStartStop = False
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    ImageComponent random_isi_kitchen_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent random_isi_kitchen_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent random_isi_kitchen_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    TextComponent random_isi_kitchen_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies eine Küche?
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  Routine living_random_isi
    RoutineSettingsComponent living_random_isi
      saveStartStop = False
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    ImageComponent living_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent living_random_isi_no
      letterHeight = 0.05
      pos = (-0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent living_random_isi_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    CodeComponent living_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent living_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Wohnzimmer?
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  Routine living_picture
    RoutineSettingsComponent living_picture
      saveStartStop = False
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    ImageComponent living_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent living_picture_image
      image [set every repeat] = $stimulus
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent living_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent living_picture_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    KeyboardComponent living_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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    TextComponent living_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Wohnzimmer?
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  Routine kitchen_picture
    RoutineSettingsComponent kitchen_picture
      saveStartStop = False
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    ImageComponent kitchen_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent kitchen_picture_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    TextComponent kitchen_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies eine Küche?
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    KeyboardComponent kitchen_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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  Routine living_b
    RoutineSettingsComponent living_b
      saveStartStop = False
      skipIf = living_b_categorization_trials.thisN > 0
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    TextComponent living_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Wohnzimmer
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    TextComponent living_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent living_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_a
    RoutineSettingsComponent kitchen_a
      saveStartStop = False
      skipIf = kitchen_a_categorization_trials.thisN > 0
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    TextComponent kitchen_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent kitchen_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_b_2
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    TextComponent kitchen_b_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_b_text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um den nächsten Block zu starten.
        Es beginnt Block

        Von 6
    KeyboardComponent kitchen_b_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no_2
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine living_a
    RoutineSettingsComponent living_a
      saveStartStop = False
      skipIf = living_a_categorization_trials.thisN > 0
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    TextComponent living_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Wohnzimmer
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    TextComponent living_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent living_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_a_memo_instr
    RoutineSettingsComponent kitchen_a_memo_instr
      saveStartStop = False
      skipIf = kitchen_a_memotest.thisN > 0
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    TextComponent kitchen_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Küche.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent kitchen_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine kitchen_b_memo_instr
    RoutineSettingsComponent kitchen_b_memo_instr
      saveStartStop = False
      skipIf = kitchen_b_memotest.thisN > 0
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    TextComponent kitchen_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Küche.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent kitchen_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_a_memotest_instr
    RoutineSettingsComponent living_a_memotest_instr
      saveStartStop = False
      skipIf = living_a_memotest.thisN > 0
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    TextComponent living_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Wohnzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent living_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_b_memotest_instr
    RoutineSettingsComponent living_b_memotest_instr
      saveStartStop = False
      skipIf = living_b_memotest.thisN > 0
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    TextComponent living_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Wohnzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent living_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a_memotest_instr
    RoutineSettingsComponent bed_a_memotest_instr
      saveStartStop = False
      skipIf = bed_a_memotest.thisN > 0
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    TextComponent bed_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Schlafzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent bed_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_b_memotest_instr
    RoutineSettingsComponent bed_b_memotest_instr
      saveStartStop = False
      skipIf = bed_b_memotest.thisN > 0
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    TextComponent bed_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Schlafzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent bed_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a
    RoutineSettingsComponent bed_a
      saveStartStop = False
      skipIf = bed_a_categorization_trials.thisN > 0
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    TextComponent bed_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Schlafzimmer
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    TextComponent bed_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent bed_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine bed_random_isi
    RoutineSettingsComponent bed_random_isi
      saveStartStop = False
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    ImageComponent bed_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent bed_random_isi_no
      letterHeight = 0.05
      pos = (-0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent bed_random_isi_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    CodeComponent bed_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent bed_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Schlafzimmer?
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  Routine bed_picture
    RoutineSettingsComponent bed_picture
      saveStartStop = False
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    ImageComponent bed_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent bed_picture_image
      image [set every repeat] = $stimulus
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent bed_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent bed_picture_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    KeyboardComponent bed_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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    TextComponent bed_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Schlafzimmer?
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  Routine bed_b
    RoutineSettingsComponent bed_b
      saveStartStop = False
      skipIf = bed_b_categorization_trials.thisN > 0
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    TextComponent bed_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Schlafzimmer
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    TextComponent bed_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent bed_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine instructions_cat_2
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    TextComponent instructions_cat_2_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt der Übungsteil für die Kategorisierungsaufgabe.

        Ihnen wird gleich eine Kategorie genannt. Danach werden mehrere Bilder präsentiert. Geben Sie mit den Tasten "f" und "j" für jedes Bild so schnell wie möglich an, ob das Bild zur genannten Kategorie gehört.

        Starten Sie mit der LEERTASTE.
    KeyboardComponent instructions_cat_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  Routine consent
  Routine data_safety
  Routine data_safety_2
  Routine instructions_cat
  Routine instructions_cat_2
  Routine category_test_text
  LoopInitiator cat_training_trials loopType="TrialHandler"
    conditionsFile = conditions_cat_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_13.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_14.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_15.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_16.jpg', 'correct_answer': 'f'}]
    Routine fix_categorization_training
    Routine categorization_training
    Routine cat_training_feedback
  LoopTerminator cat_training_trials
  Routine instruction_memo
  LoopInitiator memo_training_trials loopType="TrialHandler"
    conditionsFile = conditions_memo_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_17.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_18.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_19.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_20.jpg', 'correct_1': 3}]
    Routine memo_fix_isi
    Routine memo_training
    Routine memo_training_feedback
  LoopTerminator memo_training_trials
  Routine start_categorization
  LoopInitiator categorization_trials loopType="TrialHandler"
    conditionsFile = $conditions_block_order
    loopType = sequential
    nReps = 1
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    LoopInitiator kitchen_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_a_categorization_trials
    LoopInitiator kitchen_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_a_memotest
    LoopInitiator kitchen_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_b_categorization_trials
    LoopInitiator kitchen_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_b_memotest
    LoopInitiator living_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_a_categorization_trials
    LoopInitiator living_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_a_memotest
    LoopInitiator living_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_b_categorization_trials
    LoopInitiator living_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_b_memotest
    LoopInitiator bed_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_a
      loopType = sequential
      nReps = bedrooms_1
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      Routine bed_a
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_a_categorization_trials
    LoopInitiator bed_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_a
      loopType = random
      nReps = bedrooms_1
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      Routine bed_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_a_memotest
    LoopInitiator bed_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_b
      loopType = random
      nReps = bedrooms_2
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      Routine bed_b
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_b_categorization_trials
    LoopInitiator bed_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_b
      loopType = sequential
      nReps = bedrooms_2
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      Routine bed_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_b_memotest
    Routine middle_break
  LoopTerminator categorization_trials
  Routine end
