PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'gender': '', 'handedness': '', 'email for compensation': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/catch_01.jpg', 'stimuli/catch_02.jpg', 'stimuli/catch_03.jpg', 'stimuli/catch_04.jpg', 'stimuli/catch_05.jpg', 'stimuli/catch_06.jpg', 'stimuli/catch_07.jpg', 'stimuli/catch_08.jpg', 'stimuli/catch_09.jpg', 'stimuli/catch_10.jpg', 'stimuli/catch_11.jpg', 'stimuli/catch_12.jpg', 'stimuli/catch_13.jpg', 'stimuli/catch_14.jpg', 'stimuli/catch_15.jpg', 'stimuli/catch_16.jpg', 'stimuli/catch_17.jpg', 'stimuli/catch_18.jpg', 'stimuli/catch_19.jpg', 'stimuli/catch_20.jpg', 'stimuli/catch_21.jpg', 'stimuli/catch_22.jpg', 'stimuli/catch_23.jpg', 'stimuli/catch_24.jpg', 'stimuli/catch_25.jpg', 'stimuli/catch_26.jpg', 'stimuli/catch_27.jpg', 'stimuli/catch_28.jpg', 'stimuli/catch_29.jpg', 'stimuli/catch_30.jpg', 'stimuli/catch_31.jpg', 'stimuli/catch_32.jpg', 'stimuli/catch_33.jpg', 'stimuli/catch_34.jpg', 'stimuli/catch_35.jpg', 'stimuli/catch_36.jpg', 'stimuli/catch_37.jpg', 'stimuli/catch_38.jpg', 'stimuli/catch_39.jpg', 'stimuli/catch_40.jpg', 'stimuli/img_0eflx.png', 'stimuli/img_0j24m.png', 'stimuli/img_0jzz7.png', 'stimuli/img_0mhms.png', 'stimuli/img_0nckg.png', 'stimuli/img_1ao2d.png', 'stimuli/img_1r2ri.png', 'stimuli/img_1r08n.png', 'stimuli/img_1vq1v.png', 'stimuli/img_01w8b.png', 'stimuli/img_1zhz6.png', 'stimuli/img_02alv.png', 'stimuli/img_2b8fp.png', 'stimuli/img_2dnfy.png', 'stimuli/img_2js6m.png', 'stimuli/img_2pk6v.png', 'stimuli/img_2pnl2.png', 'stimuli/img_2qhro.png', 'stimuli/img_3bxjb.png', 'stimuli/img_3gm8h.png', 'stimuli/img_3h4c9.png', 'stimuli/img_3jnt7.png', 'stimuli/img_3m61b.png', 'stimuli/img_3sw8t.png', 'stimuli/img_3tnh4.png', 'stimuli/img_3ze38.png', 'stimuli/img_4o8l0.png', 'stimuli/img_4ufga.png', 'stimuli/img_4wq98.png', 'stimuli/img_05flq.png', 'stimuli/img_5il0t.png', 'stimuli/img_5jp4f.png', 'stimuli/img_5jy9c.png', 'stimuli/img_5m6x4.png', 'stimuli/img_5mw7y.png', 'stimuli/img_5nlnv.png', 'stimuli/img_5p2ql.png', 'stimuli/img_5tr4v.png', 'stimuli/img_5yhyk.png', 'stimuli/img_6a0hu.png', 'stimuli/img_6ddrx.png', 'stimuli/img_6nbgt.png', 'stimuli/img_6wne4.png', 'stimuli/img_6zz63.png', 'stimuli/img_7caxh.png', 'stimuli/img_7ed9m.png', 'stimuli/img_7lz7m.png', 'stimuli/img_7os7q.png', 'stimuli/img_7pgd2.png', 'stimuli/img_7ucnr.png', 'stimuli/img_7w5tw.png', 'stimuli/img_7wquy.png', 'stimuli/img_7wul8.png', 'stimuli/img_8dacu.png', 'stimuli/img_8dmpq.png', 'stimuli/img_8fpog.png', 'stimuli/img_9bkl9.png', 'stimuli/img_9mcah.png', 'stimuli/img_9oofc.png', 'stimuli/img_9pfbj.png', 'stimuli/img_9z99v.png', 'stimuli/img_16kib.png', 'stimuli/img_24rt2.png', 'stimuli/img_30vz5.png', 'stimuli/img_37hgm.png', 'stimuli/img_49h18.png', 'stimuli/img_53nbn.png', 'stimuli/img_57os5.png', 'stimuli/img_65cdi.png', 'stimuli/img_68wfw.png', 'stimuli/img_71mhq.png', 'stimuli/img_72fmj.png', 'stimuli/img_73pyk.png', 'stimuli/img_79b5l.png', 'stimuli/img_84s7n.png', 'stimuli/img_088sa.png', 'stimuli/img_89dvt.png', 'stimuli/img_89rmb.png', 'stimuli/img_91csq.png', 'stimuli/img_91lbx.png', 'stimuli/img_95hiv.png', 'stimuli/img_99exx.png', 'stimuli/img_165pk.png', 'stimuli/img_196rk.png', 'stimuli/img_411xa.png', 'stimuli/img_463mq.png', 'stimuli/img_4974k.png', 'stimuli/img_5949k.png', 'stimuli/img_9684y.png', 'stimuli/img_60242.png', 'stimuli/img_a8wvq.png', 'stimuli/img_a8y4y.png', 'stimuli/img_a9acb.png', 'stimuli/img_a9he3.png', 'stimuli/img_abobq.png', 'stimuli/img_ac0ey.png', 'stimuli/img_amsgw.png', 'stimuli/img_anjr0.png', 'stimuli/img_anzgh.png', 'stimuli/img_aplao.png', 'stimuli/img_as3da.png', 'stimuli/img_aweye.png', 'stimuli/img_awuev.png', 'stimuli/img_b2jli.png', 'stimuli/img_b21d7.png', 'stimuli/img_b89t4.png', 'stimuli/img_b971s.png', 'stimuli/img_badai.png', 'stimuli/img_bbs77.png', 'stimuli/img_bdz92.png', 'stimuli/img_bf8nx.png', 'stimuli/img_bg264.png', 'stimuli/img_bj2gr.png', 'stimuli/img_bj99b.png', 'stimuli/img_bklr1.png', 'stimuli/img_bntrh.png', 'stimuli/img_bpyv5.png', 'stimuli/img_bwo9g.png', 'stimuli/img_c0me7.png', 'stimuli/img_c0vzo.png', 'stimuli/img_c2pbs.png', 'stimuli/img_c4uwt.png', 'stimuli/img_c30d1.png', 'stimuli/img_c79r7.png', 'stimuli/img_c89x3.png', 'stimuli/img_ca8kd.png', 'stimuli/img_ccn2w.png', 'stimuli/img_ce9vx.png', 'stimuli/img_ce55l.png', 'stimuli/img_cehin.png', 'stimuli/img_cgdyc.png', 'stimuli/img_cmyvx.png', 'stimuli/img_cnyac.png', 'stimuli/img_cogrz.png', 'stimuli/img_cv6mf.png', 'stimuli/img_cv9qj.png', 'stimuli/img_cxpff.png', 'stimuli/img_d0k76.png', 'stimuli/img_d3t0o.png', 'stimuli/img_d8xbu.png', 'stimuli/img_d9ogj.png', 'stimuli/img_d26ik.png', 'stimuli/img_dg5h7.png', 'stimuli/img_di6f0.png', 'stimuli/img_di49w.png', 'stimuli/img_die1d.png', 'stimuli/img_dkqas.png', 'stimuli/img_dmjh8.png', 'stimuli/img_ds88w.png', 'stimuli/img_e0hwx.png', 'stimuli/img_e26ut.png', 'stimuli/img_eatdk.png', 'stimuli/img_eh0no.png', 'stimuli/img_eiu3c.png', 'stimuli/img_emh91.png', 'stimuli/img_ensho.png', 'stimuli/img_eppte.png', 'stimuli/img_es7o2.png', 'stimuli/img_esb4r.png', 'stimuli/img_ewrjk.png', 'stimuli/img_f4jxo.png', 'stimuli/img_f63yi.png', 'stimuli/img_faly8.png', 'stimuli/img_fbihy.png', 'stimuli/img_fea1z.png', 'stimuli/img_fhm45.png', 'stimuli/img_fmgjx.png', 'stimuli/img_fnu4h.png', 'stimuli/img_fqgem.png', 'stimuli/img_g2akb.png', 'stimuli/img_g9od8.png', 'stimuli/img_g13d5.png', 'stimuli/img_g7870.png', 'stimuli/img_gbypq.png', 'stimuli/img_gka64.png', 'stimuli/img_gqy6z.png', 'stimuli/img_gsfx4.png', 'stimuli/img_gv750.png', 'stimuli/img_gxm46.png', 'stimuli/img_gztbt.png', 'stimuli/img_h1yyu.png', 'stimuli/img_h13c3.png', 'stimuli/img_hc49v.png', 'stimuli/img_hfz8w.png', 'stimuli/img_hmmra.png', 'stimuli/img_huisn.png', 'stimuli/img_i2k07.png', 'stimuli/img_i6wsx.png', 'stimuli/img_i7vab.png', 'stimuli/img_ic3os.png', 'stimuli/img_ifebc.png', 'stimuli/img_ikk62.png', 'stimuli/img_il020.png', 'stimuli/img_inqod.png', 'stimuli/img_iqmdm.png', 'stimuli/img_iudc4.png', 'stimuli/img_iyxnj.png', 'stimuli/img_j4ttn.png', 'stimuli/img_j5rpx.png', 'stimuli/img_j73b6.png', 'stimuli/img_j856a.png', 'stimuli/img_jge7p.png', 'stimuli/img_jivhq.png', 'stimuli/img_jkm86.png', 'stimuli/img_jp28n.png', 'stimuli/img_jpjeg.png', 'stimuli/img_jpldg.png', 'stimuli/img_jr212.png', 'stimuli/img_juob3.png', 'stimuli/img_jz3kd.png', 'stimuli/img_k0ze7.png', 'stimuli/img_k3abb.png', 'stimuli/img_kljj4.png', 'stimuli/img_kn0we.png', 'stimuli/img_koooi.png', 'stimuli/img_kost0.png', 'stimuli/img_kq9s9.png', 'stimuli/img_kugyw.png', 'stimuli/img_kwxq1.png', 'stimuli/img_kzg3h.png', 'stimuli/img_l1h36.png', 'stimuli/img_l9t30.png', 'stimuli/img_le8uf.png', 'stimuli/img_lgxzn.png', 'stimuli/img_lgyo6.png', 'stimuli/img_lpas9.png', 'stimuli/img_lpj57.png', 'stimuli/img_lpr0l.png', 'stimuli/img_lszzj.png', 'stimuli/img_lzz3x.png', 'stimuli/img_mawe6.png', 'stimuli/img_md6k3.png', 'stimuli/img_mdh76.png', 'stimuli/img_mdpr4.png', 'stimuli/img_mgnmm.png', 'stimuli/img_mjxmq.png', 'stimuli/img_mqnl6.png', 'stimuli/img_mucwi.png', 'stimuli/img_n9xll.png', 'stimuli/img_nb8p4.png', 'stimuli/img_ncr40.png', 'stimuli/img_njhlh.png', 'stimuli/img_njmgp.png', 'stimuli/img_nyv2b.png', 'stimuli/img_o30wb.png', 'stimuli/img_o37la.png', 'stimuli/img_oau79.png', 'stimuli/img_okvvw.png', 'stimuli/img_oou46.png', 'stimuli/img_ose78.png', 'stimuli/img_oz18d.png', 'stimuli/img_ozxpp.png', 'stimuli/img_p3hpc.png', 'stimuli/img_p659z.png', 'stimuli/img_pbsj1.png', 'stimuli/img_pdzf1.png', 'stimuli/img_pey7u.png', 'stimuli/img_pjfx6.png', 'stimuli/img_pna7l.png', 'stimuli/img_psgf7.png', 'stimuli/img_pt3d7.png', 'stimuli/img_q1ynd.png', 'stimuli/img_q9lab.png', 'stimuli/img_qbdgm.png', 'stimuli/img_qbkdt.png', 'stimuli/img_qdln8.png', 'stimuli/img_qgbyn.png', 'stimuli/img_qihxi.png', 'stimuli/img_qmand.png', 'stimuli/img_qmgwq.png', 'stimuli/img_qrc78.png', 'stimuli/img_qz292.png', 'stimuli/img_r2lxk.png', 'stimuli/img_r10cu.png', 'stimuli/img_ra2nm.png', 'stimuli/img_rg4in.png', 'stimuli/img_ri0yx.png', 'stimuli/img_rru0v.png', 'stimuli/img_rvssl.png', 'stimuli/img_rych7.png', 'stimuli/img_s2zoe.png', 'stimuli/img_s9are.png', 'stimuli/img_scrdm.png', 'stimuli/img_sfh4b.png', 'stimuli/img_sltwe.png', 'stimuli/img_swcci.png', 'stimuli/img_swq34.png', 'stimuli/img_sx68r.png', 'stimuli/img_t1cr9.png', 'stimuli/img_t2ioc.png', 'stimuli/img_t4hvr.png', 'stimuli/img_t90e2.png', 'stimuli/img_tbs4n.png', 'stimuli/img_th7xh.png', 'stimuli/img_tn8ys.png', 'stimuli/img_tujn3.png', 'stimuli/img_tv8e2.png', 'stimuli/img_twj5p.png', 'stimuli/img_u1rxv.png', 'stimuli/img_u2o6z.png', 'stimuli/img_u9f9l.png', 'stimuli/img_ua9bs.png', 'stimuli/img_ub9nn.png', 'stimuli/img_uegbb.png', 'stimuli/img_uhmld.png', 'stimuli/img_uspja.png', 'stimuli/img_uttnz.png', 'stimuli/img_uwv6y.png', 'stimuli/img_uxxo0.png', 'stimuli/img_uy1n4.png', 'stimuli/img_v8dra.png', 'stimuli/img_vbrb7.png', 'stimuli/img_vg73h.png', 'stimuli/img_vgaye.png', 'stimuli/img_vgh2g.png', 'stimuli/img_vh7v8.png', 'stimuli/img_vnxft.png', 'stimuli/img_w8yhd.png', 'stimuli/img_wbws6.png', 'stimuli/img_wgddx.png', 'stimuli/img_wgkqa.png', 'stimuli/img_wijef.png', 'stimuli/img_wppku.png', 'stimuli/img_wyctg.png', 'stimuli/img_wyl6z.png', 'stimuli/img_wz6x5.png', 'stimuli/img_x0u5z.png', 'stimuli/img_x4bln.png', 'stimuli/img_x9ml4.png', 'stimuli/img_x9w7o.png', 'stimuli/img_xbtev.png', 'stimuli/img_xdhz2.png', 'stimuli/img_xesl0.png', 'stimuli/img_xguy9.png', 'stimuli/img_xpco9.png', 'stimuli/img_xr3up.png', 'stimuli/img_xtb79.png', 'stimuli/img_xti0z.png', 'stimuli/img_xu1p3.png', 'stimuli/img_xy930.png', 'stimuli/img_xzyzy.png', 'stimuli/img_ybbmx.png', 'stimuli/img_ye5sl.png', 'stimuli/img_yeh72.png', 'stimuli/img_ymgcb.png', 'stimuli/img_yosqb.png', 'stimuli/img_ys3qz.png', 'stimuli/img_yteqw.png', 'stimuli/img_z3yzz.png', 'stimuli/img_z4jxm.png', 'stimuli/img_z5osu.png', 'stimuli/img_z10c7.png', 'stimuli/img_z293c.png', 'stimuli/img_zgg62.png', 'stimuli/img_zh8ms.png', 'stimuli/img_zi8qc.png', 'stimuli/img_zi682.png', 'stimuli/img_zt893.png', 'stimuli/img_zv0dq.png', 'stimuli/img_zxvl3.png', 'stimuli/train_1.jpg', 'stimuli/train_2.jpg', 'stimuli/train_3.jpg', 'stimuli/train_4.jpg', 'stimuli/train_5.jpg', 'stimuli/train_6.jpg', 'stimuli/train_7.jpg', 'stimuli/train_8.jpg', 'stimuli/train_9.jpg', 'stimuli/train_10.jpg', 'stimuli/train_11.jpg', 'stimuli/train_12.jpg', 'stimuli/train_13.jpg', 'stimuli/train_14.jpg', 'stimuli/train_15.jpg', 'stimuli/train_16.jpg', 'stimuli/train_17.jpg', 'stimuli/train_18.jpg', 'stimuli/train_19.jpg', 'stimuli/train_20.jpg', 'stimuli/train_x1.jpg', 'stimuli/train_x2.jpg', 'stimuli/train_x3.jpg', 'stimuli/train_x4.jpg', 'stimuli/train_x5.jpg', 'stimuli/train_x6.jpg', 'stimuli/train_x7.jpg', 'stimuli/train_x8.jpg', 'stimuli/train_x9.jpg', 'stimuli/train_x10.jpg', 'conditions_cat_training.xlsx', 'conditions_memo_training.xlsx', 'fixationskreuz.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = SceneCat_2023_2_key_resp
  exportHTML = manually
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_text
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        -- SceneCat 3 --

        Welcome to the experiment

        In this experiment we investigate how photographs of different room categories are perceived and remembered. It will take about 30 minutes.
        Please take an upright position for the duration of the experiment.

        First, a declaration of consent and the privacy policy will follow.

        Please note, that you should not leave the fullscreen mode at any time, since the experiment will then terminate automatically.

        Continue with SPACE.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent conditions_files_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Conditions Files zuweisen
        participant = expInfo['participant']

        conditions_cat_kitchen_a = "input_files/" + participant + "_scenecat_categorization_kitchens_1.xlsx"
        conditions_cat_kitchen_b =  "input_files/" + participant + "_scenecat_categorization_kitchens_2.xlsx"
        conditions_cat_living_a =  "input_files/" + participant + "_scenecat_categorization_living_rooms_1.xlsx"
        conditions_cat_living_b =  "input_files/" + participant + "_scenecat_categorization_living_rooms_2.xlsx"
        conditions_cat_sleep_a =  "input_files/" + participant + "_scenecat_categorization_bedrooms_1.xlsx"
        conditions_cat_sleep_b =  "input_files/" + participant + "_scenecat_categorization_bedrooms_2.xlsx"
        conditions_memo_kitchen_a =  "input_files/" + participant + "_scenecat_memory_kitchens_1.xlsx"
        conditions_memo_kitchen_b =  "input_files/" + participant + "_scenecat_memory_kitchens_2.xlsx"
        conditions_memo_living_a = "input_files/" +  participant + "_scenecat_memory_living_rooms_1.xlsx"
        conditions_memo_living_b = "input_files/" +  participant + "_scenecat_memory_living_rooms_2.xlsx"
        conditions_memo_sleep_a =  "input_files/" + participant + "_scenecat_memory_bedrooms_1.xlsx"
        conditions_memo_sleep_b = "input_files/" +  participant + "_scenecat_memory_bedrooms_2.xlsx"
        conditions_block_order = "input_files/" +  participant + "_scenecat_block_order.xlsx"
  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    TextComponent consent_text
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Declaration of consent

        Thank you for participating in our study on image comprehension!

        Your participation in this study is voluntary. You are free to discontinue your participation at any time during this study without incurring any disadvantages.

        Data protection: Your details are of course confidential and will only be stored and evaluated in a completely anonymous form, i.e. without reference to your name or other personal data. Further information can be found in the privacy policy.

        Questions: If you have any questions about this study, you can contact the study director or Prof. Niko Busch (niko.busch@uni-muenster) at any time.

        I confirm that I am at least 18 years old, have read and understood this consent form and wish to participate in the study. I have taken note of the privacy policy and voluntarily consent to the collection and further processing of my personal data as described therein. I have been informed of my right to withdraw my consent at any time without giving reasons.

        Press SPACE to confirm your participation.
        Press ESC to stop the experiment.
    KeyboardComponent consent_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    ResourceManagerComponent resources_consent_new
      actionType = Start Only
      checkAll = False
      forceEndRoutine = False
      resources = ['conditions_cat_sleep_b', 'conditions_cat_sleep_a', 'conditions_cat_living_b', 'conditions_cat_living_a', 'conditions_cat_kitchen_b', 'conditions_cat_kitchen_a', 'conditions_memo_living_b', 'conditions_memo_sleep_b', 'conditions_memo_sleep_a', 'conditions_memo_living_a', 'conditions_memo_kitchen_b', 'conditions_memo_kitchen_a', 'conditions_block_order']
      startVal [time (s)] = 0
  Routine data_3
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  Routine data_safety
    RoutineSettingsComponent data_safety
      saveStartStop = False
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    TextComponent data_safety_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Privacy policy

        1. Scope of data collection and processing: In the course of the study, your demographic data (age, gender, handedness) as well as reaction times and correctness of your answers will be collected during the experiment. The data and personal communications collected as part of this study will be treated confidentially. Those employees who have personal data through direct contact with you are subject to a duty of confidentiality.  The data will be collected completely anonymously, i.e. your name will not be asked at any point. The anonymized data is stored for at least 10 years. At the end of the session, your data will be stored without your name, i.e. in anonymized form. From this point on, your data can no longer be associated with your person, i.e. it is no longer possible to identify your data. We can therefore only comply with your request to delete your data until it has been stored in anonymized form. The results and data of this study will be published as a scientific publication. This is done in anonymized form, i.e. without the data being assigned to a specific person. The completely anonymized data of this study will be made available as open data in a secure, internet-based data archive (e.g. OSF, ZPID, GESIS etc.). This study thus follows the recommendations of the German Research Foundation (DFG) and the German Psychological Society (DGPs) for quality assurance in research.

        2. legal basis: The legal basis for the processing of the personal data mentioned is consent in accordance with Art. 6 (1) letter a EU GDPR.

        Press SPACE to continue.
    KeyboardComponent data_safety_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine data_safety_2
    RoutineSettingsComponent data_safety_2
      saveStartStop = False
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    TextComponent data_safety_2_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        3. revocation: You have the right to revoke your consent under data protection law at any time. The withdrawal of consent shall not affect the lawfulness of processing based on consent before its withdrawal. (Revocation with effect for the future). Address the revocation to the controller. You will not suffer any disadvantages as a result of the revocation.
        4. name and address of the controller: The controller within the meaning of the EU General Data Protection Regulation (GDPR) and other national data protection laws of the member states as well as other data protection regulations is the University of Münster, represented by the Rector, Prof. Dr. Johannes Wessels, Schlossplatz 2, 48149 Münster, phone: + 49 251 83-0, email: verwaltung@uni-muenster.de. If you have any questions about the content of the project, please contact the specialist contact person directly: Prof. Niko Busch, Tel.: + 49 (0) 251 83 34159, e-mail: niko.busch@uni-muenster.de
        5. contact details of the data protection officer: The data protection officer of the University of Münster is: Nina Meyer-Pachur, Schlossplatz 2, 48149 Münster, phone: + 49 251 83-22446, e-mail: datenschutz@uni-muenster.de
        6. reference to the rights of data subjects: According to the General Data Protection Regulation, you generally have the right to Information (Art 15 GDPR) , objection (Art 21 GDPR), data portability (Art 20 GDPR), erasure (Art 17 GDPR), restriction of processing (Art 18 GDPR), rectification (Art 16 GDPR). If you would like to exercise one of these rights, please contact one of the contact persons listed. You also have the right to lodge a complaint with the supervisory authority: State Commissioner for Data Protection and Freedom of Information North Rhine-Westphalia, Helga Block, Kavalleriestraße 2-4, 40213 Düsseldorf, phone: 02 11/384 24-0, email: poststelle@ldi.nrw.de, website: http://www.ldi.nrw.de

        Press SPACE to continue.
    KeyboardComponent data_safety_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_cat
    RoutineSettingsComponent instructions_cat
      saveStartStop = False
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    TextComponent instructions_cat_text_2
      letterHeight = 0.026
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Experiment Instructions:

        The experiment consists of a practice block and six subsequent blocks, each with two parts.

        1. Categorization Task:
           - At the beginning of each block, you will be given a specific room category (e.g., living room). Your task is to categorize the pictures shown:
        - Press the “f” key as QUICKLY as possible if the picture does NOT belong to the specified category.
        - Press the “j” key as QUICKLY as possible if the picture belongs to the specified category.
        - Speed is very important in this task, so please respond as fast as you can.

        2. Memory Test:
           - In the second part of the block, you will be shown pictures again. Indicate whether each picture was shown in categorization task of the present block and rate your confidence:
        - “Certainly old” (picture was shown before and you are certain)
        - “Rather old” (picture was shown before and you are somewhat certain)
        - “Rather new” (picture was not shown before and you are somewhat certain)
        - “Certainly new” (picture was not shown before and you are certain)
        - Please respond as accurately as possible in this task; speed is not important here.

        Additional Information:
        - A fixation cross will appear in the center of the screen between images in both parts. Please keep your eyes on this position throughout the entire block.
        - There will be a practice block at the beginning, including both parts of the task. After each answer, you will see whether it was correct or incorrect. This will help you understand the task better.

        Preparation:
        - Place your fingers on the “f” and “j” keys now.

        Press SPACE to continue with the practice block.
    KeyboardComponent instructions_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine category_test_text
    RoutineSettingsComponent category_test_text
      saveStartStop = False
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    TextComponent category_test_word
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text = train station
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  Routine fix_categorization_training
    RoutineSettingsComponent fix_categorization_training
      saveStartStop = False
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    CodeComponent random_isi_code_cat_training
      Code Type = Both
      Begin JS Routine:
        time = 0.9 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(0.9,1.9)
    TextComponent fix_cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Is this a train station?
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    TextComponent fix_cat_training_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        no
    TextComponent fix_cat_training_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        yes
    ImageComponent fix_cat_training_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine categorization_training
    RoutineSettingsComponent categorization_training
      saveStartStop = False
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    ImageComponent cat_training_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.75
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    ImageComponent cat_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent cat_training_key
      allowedKeys = 'f','j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this a train station?
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    TextComponent cat_training_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        no
    TextComponent cat_training_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        yes
  Routine cat_training_feedback
    RoutineSettingsComponent cat_training_feedback
      saveStartStop = False
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    CodeComponent cat_train_feedb_code
      Code Type = Auto->JS
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      Begin Routine:
        if cat_training_key.corr == 1:
            cat_training_feedb_eval = "correct"
        else:
            cat_training_feedb_eval = "wrong"
    TextComponent cat_train_feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cat_training_feedb_eval
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    TextComponent cat_train_feedb_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        f

        no
    TextComponent cat_train_feedb_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         j

        yes
    TextComponent cat_train_feedb_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Is this a train station?
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  Routine start_categorization
    RoutineSettingsComponent start_categorization
      saveStartStop = False
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    TextComponent start_cat_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        The test block is finished.

        During the following task, you will no longer be shown any feedback as to whether you have answered correctly or incorrectly.

        Press the SPACE to start the experiment.
    KeyboardComponent start_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine middle_break
    RoutineSettingsComponent middle_break
      saveStartStop = False
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    TextComponent break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        This block of the experiment is finished.

        Press SPACE to start the next block.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instruction_memo
    RoutineSettingsComponent instruction_memo
      saveStartStop = False
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    TextComponent instructions_memo_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Now the exercise part of the memory test begins.

        You will be shown a series of pictures. For each picture, please indicate whether you have seen it before during the previous categorization task.

        "Old" means the picture was shown earlier. "New" means the picture was not shown earlier.

        Additionally, please rate your confidence in your answer.

        Press SPACE to start a test run.
    KeyboardComponent instructions_memo_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memo_fix_isi
    RoutineSettingsComponent memo_fix_isi
      saveStartStop = False
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    CodeComponent random_isi_code_memo
      Code Type = Both
      Begin JS Routine:
        time = 0.2 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(0.2,1)
    ImageComponent memo_fix_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine memo_training
    RoutineSettingsComponent memo_training
      saveStartStop = False
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    ImageComponent memo_training_fix
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent memo_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
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    SliderComponent memo_training_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n certainly old', 'f \n rather old', 'j \n rather new', 'k \n certainly new']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memo_training_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine memo_training_feedback
    RoutineSettingsComponent memo_training_feedback
      saveStartStop = False
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    CodeComponent memo_train_feedb_code
      Code Type = Both
      Begin JS Routine:
        if ((memo_training_slider_key_resp.keys == 'd' || memo_training_slider_key_resp.keys == 'f')) {
            rating = 1;
        }   else {
            rating = 3;
        }

        if (rating == correct_1) {
            memo_train_feedb_eval = 'correct';
        } else {
            memo_train_feedb_eval = 'wrong';
        }
      Begin Routine:
        if (memo_training_slider_key_resp.keys == 'd' or memo_training_slider_key_resp.keys == 'f'):
            rating = 1
        else:
            rating = 3

        if rating == correct_1:
            memo_train_feedb_eval = 'correct'
        else:
            memo_train_feedb_eval = 'wrong'
    TextComponent memo_train_feedb_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $memo_train_feedb_eval
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  Routine start_memotest
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    TextComponent start_memotest_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Der Testdurchlauf ist beendet.

        Für die folgende Aufgabe wird Ihnen keine Rückmeldung mehr eingeblendet, ob Sie korrekt oder falsch geantwortet haben.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent start_memotest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memotest_task
    RoutineSettingsComponent memotest_task
      saveStartStop = False
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    ImageComponent memotest_task_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
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    SliderComponent memotest_task_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n certainly old', 'f \n rather old', 'j \n rather new', 'k \n certainly new']
      letterHeight = 0.03
      pos = (0, -0.325)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memotest_task_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent end_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        -- SceneCat 3 --

        Thank you for your participation!

        Press SPACE to end the experiment.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine kitchen_b
    RoutineSettingsComponent kitchen_b
      saveStartStop = False
      skipIf = kitchen_b_categorization_trials.thisN > 0
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    TextComponent kitchen_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = kitchen
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    TextComponent kitchen_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent kitchen_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_b_random_isi
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    ImageComponent random_isi_kitchen_b_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_b_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent random_isi_kitchen_b_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        ja
    TextComponent random_isi_kitchen_b_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        nein
    TextComponent random_isi_kitchen_b_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies eine Küche?
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  Routine kitchen_b_picture
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    ImageComponent kitchen_b_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_b_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_b_picture_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        ja
    TextComponent kitchen_b_picture_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        nein
    TextComponent kitchen_b_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies eine Küche?
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    KeyboardComponent kitchen_b_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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  Routine living_a_random_isi
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  Routine kitchen_random_isi
    RoutineSettingsComponent kitchen_random_isi
      saveStartStop = False
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    ImageComponent random_isi_kitchen_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_code
      Code Type = Both
      Begin JS Routine:
        time = 0.9 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(0.9,1.9)
    TextComponent random_isi_kitchen_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        no
    TextComponent random_isi_kitchen_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        yes
    TextComponent random_isi_kitchen_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Is this a kitchen?
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  Routine living_random_isi
    RoutineSettingsComponent living_random_isi
      saveStartStop = False
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    ImageComponent living_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent living_random_isi_no
      letterHeight = 0.05
      pos = (-0.3 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        no
    TextComponent living_random_isi_yes
      letterHeight = 0.05
      pos = (0.3 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        yes
    CodeComponent living_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 0.9 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(0.9,1.9)
    TextComponent living_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Is this a living room?
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  Routine living_picture
    RoutineSettingsComponent living_picture
      saveStartStop = False
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    ImageComponent living_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent living_picture_image
      image [set every repeat] = $stimulus
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent living_picture_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        no
    TextComponent living_picture_yes
      letterHeight = 0.05
      pos = (0.3 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        yes
    KeyboardComponent living_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent living_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this a living room?
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  Routine kitchen_picture
    RoutineSettingsComponent kitchen_picture
      saveStartStop = False
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    ImageComponent kitchen_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_picture_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        no
    TextComponent kitchen_picture_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        yes
    TextComponent kitchen_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this a kitchen?
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    KeyboardComponent kitchen_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine living_b
    RoutineSettingsComponent living_b
      saveStartStop = False
      skipIf = living_b_categorization_trials.thisN > 0
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    TextComponent living_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = living room
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    TextComponent living_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent living_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_a
    RoutineSettingsComponent kitchen_a
      saveStartStop = False
      skipIf = kitchen_a_categorization_trials.thisN > 0
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    TextComponent kitchen_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = kitchen
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    TextComponent kitchen_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent kitchen_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_b_2
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    TextComponent kitchen_b_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_b_text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um den nächsten Block zu starten.
        Es beginnt Block

        Von 6
    KeyboardComponent kitchen_b_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no_2
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine living_a
    RoutineSettingsComponent living_a
      saveStartStop = False
      skipIf = living_a_categorization_trials.thisN > 0
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    TextComponent living_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = living room
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    TextComponent living_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent living_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_a_memo_instr
    RoutineSettingsComponent kitchen_a_memo_instr
      saveStartStop = False
      skipIf = kitchen_a_memotest.thisN > 0
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    TextComponent kitchen_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the kitchen category.

        Press SPACE to start.
    KeyboardComponent kitchen_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine kitchen_b_memo_instr
    RoutineSettingsComponent kitchen_b_memo_instr
      saveStartStop = False
      skipIf = kitchen_b_memotest.thisN > 0
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    TextComponent kitchen_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the kitchen category.

        Press SPACE to start.
    KeyboardComponent kitchen_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_a_memotest_instr
    RoutineSettingsComponent living_a_memotest_instr
      saveStartStop = False
      skipIf = living_a_memotest.thisN > 0
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    TextComponent living_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the living room category.

        Press SPACE to start.
    KeyboardComponent living_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_b_memotest_instr
    RoutineSettingsComponent living_b_memotest_instr
      saveStartStop = False
      skipIf = living_b_memotest.thisN > 0
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    TextComponent living_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the living room category.

        Press SPACE to start.
    KeyboardComponent living_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a_memotest_instr
    RoutineSettingsComponent bed_a_memotest_instr
      saveStartStop = False
      skipIf = bed_a_memotest.thisN > 0
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    TextComponent bed_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the bedroom category.

        Press SPACE to start.
    KeyboardComponent bed_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_b_memotest_instr
    RoutineSettingsComponent bed_b_memotest_instr
      saveStartStop = False
      skipIf = bed_b_memotest.thisN > 0
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    TextComponent bed_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the memory test starts for the bedroom category.

        Press SPACE to start.
    KeyboardComponent bed_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a
    RoutineSettingsComponent bed_a
      saveStartStop = False
      skipIf = bed_a_categorization_trials.thisN > 0
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    TextComponent bed_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = bedroom
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    TextComponent bed_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent bed_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine bed_random_isi
    RoutineSettingsComponent bed_random_isi
      saveStartStop = False
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    ImageComponent bed_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent bed_random_isi_no
      letterHeight = 0.05
      pos = (-0.3 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        no
    TextComponent bed_random_isi_yes
      letterHeight = 0.05
      pos = (0.3 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        yes
    CodeComponent bed_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 0.9 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(0.9,1.9)
    TextComponent bed_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Is this a bedroom?
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  Routine bed_picture
    RoutineSettingsComponent bed_picture
      saveStartStop = False
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    ImageComponent bed_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent bed_picture_image
      image [set every repeat] = $stimulus
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent bed_picture_no
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        no
    TextComponent bed_picture_yes
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        yes
    KeyboardComponent bed_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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    TextComponent bed_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Is this a bedroom?
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  Routine bed_b
    RoutineSettingsComponent bed_b
      saveStartStop = False
      skipIf = bed_b_categorization_trials.thisN > 0
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    TextComponent bed_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = bedroom
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    TextComponent bed_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Press SPACE to start block



        from 6.
    KeyboardComponent bed_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine instructions_cat_2
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    TextComponent instructions_cat_2_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the exercise part for the categorization task begins.

        We will show you a text label indicating a category. Next, we will show you a sequence of images. Use the “f”and “j” keys to indicate as quickly as possible for each picture whether the picture belongs to the specified category.
        f = is NOT from that category
        j = YES, is from that category

        Start with SPACE.
    KeyboardComponent instructions_cat_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  Routine consent
  Routine data_safety
  Routine data_safety_2
  Routine instructions_cat
  Routine instructions_cat_2
  Routine category_test_text
  LoopInitiator cat_training_trials loopType="TrialHandler"
    conditionsFile = conditions_cat_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_13.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_14.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_15.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_16.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x1.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x2.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x3.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x4.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x5.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x6.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x7.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x8.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_x9.jpg', 'correct_answer': 'f'}]
    Routine fix_categorization_training
    Routine categorization_training
    Routine cat_training_feedback
  LoopTerminator cat_training_trials
  Routine instruction_memo
  LoopInitiator memo_training_trials loopType="TrialHandler"
    conditionsFile = conditions_memo_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_17.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_18.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_19.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_20.jpg', 'correct_1': 3}]
    Routine memo_fix_isi
    Routine memo_training
    Routine memo_training_feedback
  LoopTerminator memo_training_trials
  Routine start_categorization
  LoopInitiator categorization_trials loopType="TrialHandler"
    conditionsFile = $conditions_block_order
    loopType = sequential
    nReps = 1
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    LoopInitiator kitchen_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_a_categorization_trials
    LoopInitiator kitchen_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_a_memotest
    LoopInitiator kitchen_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_b_categorization_trials
    LoopInitiator kitchen_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_b_memotest
    LoopInitiator living_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_a_categorization_trials
    LoopInitiator living_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_a_memotest
    LoopInitiator living_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_b_categorization_trials
    LoopInitiator living_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_b_memotest
    LoopInitiator bed_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_a
      loopType = sequential
      nReps = bedrooms_1
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      Routine bed_a
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_a_categorization_trials
    LoopInitiator bed_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_a
      loopType = random
      nReps = bedrooms_1
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      Routine bed_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_a_memotest
    LoopInitiator bed_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_b
      loopType = random
      nReps = bedrooms_2
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      Routine bed_b
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_b_categorization_trials
    LoopInitiator bed_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_b
      loopType = sequential
      nReps = bedrooms_2
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      Routine bed_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_b_memotest
    Routine middle_break
  LoopTerminator categorization_trials
  Routine end
